---
API: 2.1
OpenSesame: 3.3.3
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family sans
set font_bold no
set experiment_path "/Users/livmoah/OneDrive/ab_uni/a Psycholing/Portfolioopgaver/Eksperiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3c3c3c"

define sketchpad End_of_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Det var det!<br /><br />Hav en god dag!<br /><br /><br />(Afslut med ENTER)" x=0 y=0 z_index=0

define sketchpad End_of_practice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Nu er øverunden slut!<br /><br /><br />Så starter det rigtige eksperiment.<br /><br /><br />Husk at svare så hurtigt og korrekt som muligt.<br /><br /><br />(Tryk ENTER)" x=0 y=0 z_index=0

define loop Experiment_loop_0
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 words "fjord kor jord ror nord"
	setcycle 0 target ror
	setcycle 0 correct_answer_word j
	setcycle 0 algebra "(5*3)-6"
	setcycle 0 correct_answer_algebra 9
	setcycle 0 condition acoustic
	setcycle 0 practice n
	setcycle 1 words "jord nord kor ror spor"
	setcycle 1 target mord
	setcycle 1 correct_answer_word n
	setcycle 1 algebra "(6/2)+1"
	setcycle 1 correct_answer_algebra 4
	setcycle 1 condition acoustic
	setcycle 1 practice n
	setcycle 2 words "kor fjord nord ror jord"
	setcycle 2 target nord
	setcycle 2 correct_answer_word j
	setcycle 2 algebra "(8*1)+1"
	setcycle 2 correct_answer_algebra 9
	setcycle 2 condition acoustic
	setcycle 2 practice n
	setcycle 3 words "nord spor jord mord ror"
	setcycle 3 target fjord
	setcycle 3 correct_answer_word n
	setcycle 3 algebra "(3*1)+4"
	setcycle 3 correct_answer_algebra 7
	setcycle 3 condition acoustic
	setcycle 3 practice n
	setcycle 4 words "mord spor bord fjord jord"
	setcycle 4 target kor
	setcycle 4 correct_answer_word n
	setcycle 4 algebra "(14/2)+0"
	setcycle 4 correct_answer_algebra 7
	setcycle 4 condition acoustic
	setcycle 4 practice n
	setcycle 5 words "ko får bjørn gris kat"
	setcycle 5 target kat
	setcycle 5 correct_answer_word j
	setcycle 5 algebra "(3*2)+2"
	setcycle 5 correct_answer_algebra 8
	setcycle 5 condition semantic
	setcycle 5 practice n
	setcycle 6 words "får hund mus gris hest"
	setcycle 6 target bjørn
	setcycle 6 correct_answer_word n
	setcycle 6 algebra "(5/1)+2"
	setcycle 6 correct_answer_algebra 7
	setcycle 6 condition semantic
	setcycle 6 practice n
	setcycle 7 words "hest mus bjørn får gris"
	setcycle 7 target hest
	setcycle 7 correct_answer_word j
	setcycle 7 algebra "(1*4)+0"
	setcycle 7 correct_answer_algebra 4
	setcycle 7 condition semantic
	setcycle 7 practice n
	setcycle 8 words "bjørn ko mus kat hund"
	setcycle 8 target får
	setcycle 8 correct_answer_word n
	setcycle 8 algebra "(12/2)+1"
	setcycle 8 correct_answer_algebra 7
	setcycle 8 condition semantic
	setcycle 8 practice n
	setcycle 9 words "gris bjørn mus hest kat"
	setcycle 9 target gris
	setcycle 9 correct_answer_word j
	setcycle 9 algebra "(8/2)+2"
	setcycle 9 correct_answer_algebra 6
	setcycle 9 condition semantic
	setcycle 9 practice n
	setcycle 10 words "kniv bus bog dør arm"
	setcycle 10 target smil
	setcycle 10 correct_answer_word n
	setcycle 10 algebra "(9/3)+2"
	setcycle 10 correct_answer_algebra 5
	setcycle 10 condition control
	setcycle 10 practice n
	setcycle 11 words "smil bus bog kniv dør"
	setcycle 11 target bog
	setcycle 11 correct_answer_word j
	setcycle 11 algebra "(4*2)+0"
	setcycle 11 correct_answer_algebra 8
	setcycle 11 condition control
	setcycle 11 practice n
	setcycle 12 words "dør kniv bog arm sko"
	setcycle 12 target arm
	setcycle 12 correct_answer_word j
	setcycle 12 algebra "(2*3)+3"
	setcycle 12 correct_answer_algebra 9
	setcycle 12 condition control
	setcycle 12 practice n
	setcycle 13 words "vand arm smil sko bog"
	setcycle 13 target kniv
	setcycle 13 correct_answer_word n
	setcycle 13 algebra "(6/2)+2"
	setcycle 13 correct_answer_algebra 5
	setcycle 13 condition control
	setcycle 13 practice n
	setcycle 14 words "bus arm dør vand smil"
	setcycle 14 target bus
	setcycle 14 correct_answer_word j
	setcycle 14 algebra "(2*4)+1"
	setcycle 14 correct_answer_algebra 9
	setcycle 14 condition control
	setcycle 14 practice n
	run trial_sequence

define loop Experiment_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 words "mord bord jord spor nord"
	setcycle 0 target ror
	setcycle 0 correct_answer_word n
	setcycle 0 algebra "(5*3)-6"
	setcycle 0 correct_answer_algebra 9
	setcycle 0 condition acoustic
	setcycle 0 practice n
	setcycle 1 words "fjord mord nord jord kor"
	setcycle 1 target jord
	setcycle 1 correct_answer_word j
	setcycle 1 algebra "(6/2)+1"
	setcycle 1 correct_answer_algebra 4
	setcycle 1 condition acoustic
	setcycle 1 practice n
	setcycle 2 words "jord nord kor spor ror"
	setcycle 2 target spor
	setcycle 2 correct_answer_word j
	setcycle 2 algebra "(8*1)+1"
	setcycle 2 correct_answer_algebra 9
	setcycle 2 condition acoustic
	setcycle 2 practice n
	setcycle 3 words "fjord mord bord kor ror"
	setcycle 3 target bord
	setcycle 3 correct_answer_word j
	setcycle 3 algebra "(3*1)+4"
	setcycle 3 correct_answer_algebra 7
	setcycle 3 condition acoustic
	setcycle 3 practice n
	setcycle 4 words "jord mord bord ror nord"
	setcycle 4 target kor
	setcycle 4 correct_answer_word n
	setcycle 4 algebra "(14/2)+0"
	setcycle 4 correct_answer_algebra 7
	setcycle 4 condition acoustic
	setcycle 4 practice n
	setcycle 5 words "bjørn gris ko hest hund"
	setcycle 5 target får
	setcycle 5 correct_answer_word n
	setcycle 5 algebra "(3*2)+2"
	setcycle 5 correct_answer_algebra 8
	setcycle 5 condition semantic
	setcycle 5 practice n
	setcycle 6 words "mus hest ko hund gris"
	setcycle 6 target bjørn
	setcycle 6 correct_answer_word n
	setcycle 6 algebra "(5/1)+2"
	setcycle 6 correct_answer_algebra 7
	setcycle 6 condition semantic
	setcycle 6 practice n
	setcycle 7 words "mus hund hest bjørn kat"
	setcycle 7 target mus
	setcycle 7 correct_answer_word j
	setcycle 7 algebra "(1*4)+0"
	setcycle 7 correct_answer_algebra 4
	setcycle 7 condition semantic
	setcycle 7 practice n
	setcycle 8 words "hund kat gris bjørn mus"
	setcycle 8 target kat
	setcycle 8 correct_answer_word j
	setcycle 8 algebra "(12/2)+1"
	setcycle 8 correct_answer_algebra 7
	setcycle 8 condition semantic
	setcycle 8 practice n
	setcycle 9 words "mus hest gris kat hund"
	setcycle 9 target hund
	setcycle 9 correct_answer_word j
	setcycle 9 algebra "(8/2)+2"
	setcycle 9 correct_answer_algebra 6
	setcycle 9 condition semantic
	setcycle 9 practice n
	setcycle 10 words "arm vand bog bus smil"
	setcycle 10 target vand
	setcycle 10 correct_answer_word j
	setcycle 10 algebra "(9/3)+2"
	setcycle 10 correct_answer_algebra 5
	setcycle 10 condition control
	setcycle 10 practice n
	setcycle 11 words "smil vand bus kniv bog"
	setcycle 11 target dør
	setcycle 11 correct_answer_word n
	setcycle 11 algebra "(4*2)+0"
	setcycle 11 correct_answer_algebra 8
	setcycle 11 condition control
	setcycle 11 practice n
	setcycle 12 words "bus sko bog smil dør"
	setcycle 12 target kniv
	setcycle 12 correct_answer_word n
	setcycle 12 algebra "(2*3)+3"
	setcycle 12 correct_answer_algebra 9
	setcycle 12 condition control
	setcycle 12 practice n
	setcycle 13 words "vand dør bog smil arm"
	setcycle 13 target smil
	setcycle 13 correct_answer_word j
	setcycle 13 algebra "(6/2)+2"
	setcycle 13 correct_answer_algebra 5
	setcycle 13 condition control
	setcycle 13 practice n
	setcycle 14 words "bog smil bus kniv vand"
	setcycle 14 target bog
	setcycle 14 correct_answer_word j
	setcycle 14 algebra "(2*4)+1"
	setcycle 14 correct_answer_algebra 9
	setcycle 14 condition control
	setcycle 14 practice n
	run trial_sequence_1_1

define loop Experiment_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 words "mord bord nord kor spor"
	setcycle 0 target nord
	setcycle 0 correct_answer_word j
	setcycle 0 algebra "(5*3)-6"
	setcycle 0 correct_answer_algebra 9
	setcycle 0 condition acoustic
	setcycle 0 practice n
	setcycle 1 words "bord ror fjord kor spor"
	setcycle 1 target fjord
	setcycle 1 correct_answer_word j
	setcycle 1 algebra "(6/2)+1"
	setcycle 1 correct_answer_algebra 4
	setcycle 1 condition acoustic
	setcycle 1 practice n
	setcycle 2 words "spor fjord bord jord ror"
	setcycle 2 target kor
	setcycle 2 correct_answer_word n
	setcycle 2 algebra "(8*1)+1"
	setcycle 2 correct_answer_algebra 9
	setcycle 2 condition acoustic
	setcycle 2 practice n
	setcycle 3 words "jord kor mord bord spor"
	setcycle 3 target ror
	setcycle 3 correct_answer_word n
	setcycle 3 algebra "(3*1)+4"
	setcycle 3 correct_answer_algebra 7
	setcycle 3 condition acoustic
	setcycle 3 practice n
	setcycle 4 words "fjord spor bord nord jord"
	setcycle 4 target jord
	setcycle 4 correct_answer_word j
	setcycle 4 algebra "(14/2)+0"
	setcycle 4 correct_answer_algebra 7
	setcycle 4 condition acoustic
	setcycle 4 practice n
	setcycle 5 words "mus hest hund får kat"
	setcycle 5 target hest
	setcycle 5 correct_answer_word j
	setcycle 5 algebra "(3*2)+2"
	setcycle 5 correct_answer_algebra 8
	setcycle 5 condition semantic
	setcycle 5 practice n
	setcycle 6 words "kat ko hest hund gris"
	setcycle 6 target ko
	setcycle 6 correct_answer_word j
	setcycle 6 algebra "(5/1)+2"
	setcycle 6 correct_answer_algebra 7
	setcycle 6 condition semantic
	setcycle 6 practice n
	setcycle 7 words "kat får hest ko bjørn"
	setcycle 7 target gris
	setcycle 7 correct_answer_word n
	setcycle 7 algebra "(1*4)+0"
	setcycle 7 correct_answer_algebra 4
	setcycle 7 condition semantic
	setcycle 7 practice n
	setcycle 8 words "bjørn kat gris hest ko"
	setcycle 8 target får
	setcycle 8 correct_answer_word n
	setcycle 8 algebra "(12/2)+1"
	setcycle 8 correct_answer_algebra 7
	setcycle 8 condition semantic
	setcycle 8 practice n
	setcycle 9 words "får kat mus hund hest"
	setcycle 9 target bjørn
	setcycle 9 correct_answer_word n
	setcycle 9 algebra "(8/2)+2"
	setcycle 9 correct_answer_algebra 6
	setcycle 9 condition semantic
	setcycle 9 practice n
	setcycle 10 words "bus bog kniv arm vand"
	setcycle 10 target sko
	setcycle 10 correct_answer_word n
	setcycle 10 algebra "(9/3)+2"
	setcycle 10 correct_answer_algebra 5
	setcycle 10 condition control
	setcycle 10 practice n
	setcycle 11 words "bog sko bus smil kniv"
	setcycle 11 target bus
	setcycle 11 correct_answer_word j
	setcycle 11 algebra "(4*2)+0"
	setcycle 11 correct_answer_algebra 8
	setcycle 11 condition control
	setcycle 11 practice n
	setcycle 12 words "sko smil bus vand dør"
	setcycle 12 target vand
	setcycle 12 correct_answer_word j
	setcycle 12 algebra "(2*3)+3"
	setcycle 12 correct_answer_algebra 9
	setcycle 12 condition control
	setcycle 12 practice n
	setcycle 13 words "bus vand arm bog kniv"
	setcycle 13 target dør
	setcycle 13 correct_answer_word n
	setcycle 13 algebra "(6/2)+2"
	setcycle 13 correct_answer_algebra 5
	setcycle 13 condition control
	setcycle 13 practice n
	setcycle 14 words "bog kniv sko dør bus"
	setcycle 14 target kniv
	setcycle 14 correct_answer_word j
	setcycle 14 algebra "(2*4)+1"
	setcycle 14 correct_answer_algebra 9
	setcycle 14 condition control
	setcycle 14 practice n
	run trial_sequence_2

define sketchpad Intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="I dette eksperiment sker der følgende:<br /><br /><br />1) Du ser en liste med 5 ord<br />2) Du får en lille regneopgave<br />3) Du skal prøve at huske ét ord fra listen<br /><br /><br />Dette gentager sig 15 gange<br /><br /><br /><br />(Tryk ENTER)<br /><br />" x=-192 y=-128 z_index=0

define loop Practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 words "mord bord jord spor nord"
	setcycle 0 target ror
	setcycle 0 correct_answer_word n
	setcycle 0 algebra "(5/1)+3"
	setcycle 0 correct_answer_algebra 8
	setcycle 0 condition acustic
	setcycle 0 practice y
	setcycle 1 words "hund kat gris bjørn mus"
	setcycle 1 target kat
	setcycle 1 correct_answer_word j
	setcycle 1 algebra "(2*3)+1"
	setcycle 1 correct_answer_algebra 7
	setcycle 1 condition semantic
	setcycle 1 practice y
	setcycle 2 words "bus bog kniv arm vand"
	setcycle 2 target sko
	setcycle 2 correct_answer_word n
	setcycle 2 algebra "(10/2)+1"
	setcycle 2 correct_answer_algebra 6
	setcycle 2 condition control
	setcycle 2 practice y
	run trial_sequence_1

define sketchpad Question
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[target]<br /><br /><br />j / n" x=0 y=0 z_index=0

define sketchpad Question_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Så du:<br /><br /><br />[target]<br /><br /><br />ja = j<br />nej = n" x=0 y=0 z_index=0

define sketchpad Question_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[target]<br /><br /><br />j / n" x=0 y=0 z_index=0

define sketchpad Question_2_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[target]<br /><br /><br />j / n" x=0 y=0 z_index=0

define keyboard_response age_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger age_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Intro always
	run new_sketchpad always
	run fixation_2 always
	run Practice_loop always
	run End_of_practice always
	run Experiment_loop_0 "[subject_nr]=0"
	run Experiment_loop_1 "[subject_nr]=1"
	run Experiment_loop_2 "[subject_nr]=2"
	run init_2_1 always
	run report_age always
	run End_of_experiment always

define sketchpad fixation_2
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad get_input_algebra
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Svar og tryk ENTER:<br /><br /><br />[algebra] = [multichar_response]" x=0 y=0 z_index=0

define sketchpad get_input_algebra_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[algebra] = [multichar_response]" x=0 y=0 z_index=0

define sketchpad get_input_algebra_1_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Nu er eksperimentet slut! <br /><br /><br />Tak fordi du ville være med!<br /><br /><br />Hvor gammel er du?<br /><br />[multichar_response]<br /><br /><br />(Svar og tryk ENTER)" x=0 y=0 z_index=0

define sketchpad get_input_algebra_1_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[algebra] = [multichar_response]" x=0 y=0 z_index=0

define sketchpad get_input_algebra_1_2_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[algebra] = [multichar_response]" x=0 y=0 z_index=0

define loop get_input_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence

define loop get_input_loop_1
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence_1

define loop get_input_loop_1_1
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence_1_1

define loop get_input_loop_1_2
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence_1_2

define loop get_input_loop_1_2_1
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence_1_2_1

define sequence get_input_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_algebra always
	run number_input always
	run process_input always

define sequence get_input_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_algebra_1 always
	run number_input_1 always
	run process_input_1 always

define sequence get_input_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_algebra_1_1 always
	run age_input always
	run process_input_1_1 always
	run age_logger always

define sequence get_input_sequence_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_algebra_1_2 always
	run number_input_1_2 always
	run process_input_1_2 always

define sequence get_input_sequence_1_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_algebra_1_2_1 always
	run number_input_1_2_1 always
	run process_input_1_2_1 always

define inline_javascript init
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.multichar_response = ''
	vars.response = ''
	__end__
	set _prepare ""

define inline_javascript init_0
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.multichar_response = ''
	vars.response = ''
	__end__
	set _prepare ""

define inline_javascript init_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.multichar_response = ''
	vars.response = ''
	__end__
	set _prepare ""

define inline_javascript init_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.multichar_response = ''
	vars.response = ''
	__end__
	set _prepare ""

define inline_javascript init_2_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.multichar_response = ''
	vars.response = ''
	__end__
	set _prepare ""

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Vi starter med tre små øverunder.<br /><br /><br />Prøv at svare så hurtigt og korrekt som muligt.<br /><br /><br />(Tryk ENTER)" x=0 y=0 z_index=0

define keyboard_response number_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response number_input_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response number_input_1_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response number_input_1_2_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad pause
	set duration 1000
	set description "Displays stimuli"

define sketchpad pause_0
	set duration 1000
	set description "Displays stimuli"

define sketchpad pause_1
	set duration 1000
	set description "Displays stimuli"

define sketchpad pause_2
	set duration 1000
	set description "Displays stimuli"

define inline_javascript process_input
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define inline_javascript process_input_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define inline_javascript process_input_1_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
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	__end__
	set _prepare ""

define inline_javascript process_input_1_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
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	__end__
	set _prepare ""

define inline_javascript process_input_1_2_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
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	__end__
	set _prepare ""

define sequence report_age
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop_1_1 always

define sequence report_algebra
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop always

define sequence report_algebra_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop_1 always

define sequence report_algebra_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop_1_2 always

define sequence report_algebra_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop_1_2_1 always

define logger response_logger_1
	set description "Logs experimental data"
	set auto_log yes

define logger response_logger_1_1
	set description "Logs experimental data"
	set auto_log yes

define logger response_logger_1_2
	set description "Logs experimental data"
	set auto_log yes

define logger response_logger_1_2_1
	set description "Logs experimental data"
	set auto_log yes

define sketchpad stim_0
	set duration 4000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[words]" x=0 y=0 z_index=0

define sketchpad stim_1
	set duration 4000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[words]" x=0 y=0 z_index=0

define sketchpad stim_1_3
	set duration 4000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Prøv at huske disse ord: <br /><br /><br />[words]" x=0 y=0 z_index=0

define sketchpad stim_2
	set duration 4000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[words]" x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_0 always
	run stim_0 always
	run report_algebra_1 always
	run Question always
	run word_response always
	run response_logger_1_1 always
	run pause_0 always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init always
	run stim_1_3 always
	run report_algebra always
	run Question_1 always
	run word_response_1 always
	run response_logger_1_1 always
	run pause always

define sequence trial_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_1 always
	run stim_1 always
	run report_algebra_1_1 always
	run Question_2 always
	run word_response_2 always
	run response_logger_1_1 always
	run pause_1 always

define sequence trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_2 always
	run stim_2 always
	run report_algebra_1_1_1 always
	run Question_2_2 always
	run word_response_2_1 always
	run response_logger_1_1 always
	run pause_2 always

define keyboard_response word_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response correct_response_word
	set allowed_responses "j;n"

define keyboard_response word_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response correct_response_word
	set allowed_responses "j;n"

define keyboard_response word_response_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response correct_response_word
	set allowed_responses "j;n"

define keyboard_response word_response_2_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response correct_response_word
	set allowed_responses "j;n"

