---
API: 2.1
OpenSesame: 3.3.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 45
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Desktop/JATOS_files/ExPsyLing"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad ISI
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sequence Report
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input always

define inline_javascript create_empty_variables
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.multichar_response = ''
	vars.response = ''
	__end__
	set _prepare ""

define keyboard_response digit_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sequence digits
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run create_empty_variables always
	run new_sampler "[condition] = int"
	run dot always
	run stimA always
	run ISI always
	run stimB always
	run ISI always
	run stimC always
	run ISI always
	run stimD always
	run ISI always
	run stimE "[E] != w"
	run ISI always
	run stimF "[F] != w"
	run ISI always
	run stimG "[G] != w"
	run dot always
	run Report always
	run response_logger always

define loop digits_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A 6
	setcycle 0 B 3
	setcycle 0 C 9
	setcycle 0 D 5
	setcycle 0 E w
	setcycle 0 F w
	setcycle 0 G w
	setcycle 0 span 4
	setcycle 0 condition noint
	setcycle 0 correct_resp 6395
	setcycle 0 practice n
	setcycle 1 A 2
	setcycle 1 B 9
	setcycle 1 C 4
	setcycle 1 D 7
	setcycle 1 E w
	setcycle 1 F w
	setcycle 1 G w
	setcycle 1 span 4
	setcycle 1 condition int
	setcycle 1 correct_resp 2947
	setcycle 1 practice n
	setcycle 2 A 1
	setcycle 2 B 7
	setcycle 2 C 8
	setcycle 2 D 3
	setcycle 2 E 6
	setcycle 2 F w
	setcycle 2 G w
	setcycle 2 span 5
	setcycle 2 condition noint
	setcycle 2 correct_resp 17836
	setcycle 2 practice n
	setcycle 3 A 7
	setcycle 3 B 2
	setcycle 3 C 5
	setcycle 3 D 4
	setcycle 3 E 9
	setcycle 3 F w
	setcycle 3 G w
	setcycle 3 span 5
	setcycle 3 condition int
	setcycle 3 correct_resp 72549
	setcycle 3 practice n
	setcycle 4 A 6
	setcycle 4 B 4
	setcycle 4 C 1
	setcycle 4 D 7
	setcycle 4 E 5
	setcycle 4 F 8
	setcycle 4 G w
	setcycle 4 span 6
	setcycle 4 condition noint
	setcycle 4 correct_resp 641758
	setcycle 4 practice n
	setcycle 5 A 5
	setcycle 5 B 4
	setcycle 5 C 2
	setcycle 5 D 8
	setcycle 5 E 3
	setcycle 5 F 7
	setcycle 5 G w
	setcycle 5 span 6
	setcycle 5 condition int
	setcycle 5 correct_resp 542837
	setcycle 5 practice n
	setcycle 6 A 8
	setcycle 6 B 6
	setcycle 6 C 3
	setcycle 6 D 9
	setcycle 6 E 7
	setcycle 6 F 1
	setcycle 6 G 4
	setcycle 6 span 7
	setcycle 6 condition noint
	setcycle 6 correct_resp 8639714
	setcycle 6 practice n
	setcycle 7 A 1
	setcycle 7 B 2
	setcycle 7 C 6
	setcycle 7 D 8
	setcycle 7 E 4
	setcycle 7 F 7
	setcycle 7 G 5
	setcycle 7 span 7
	setcycle 7 condition int
	setcycle 7 correct_resp 1268475
	setcycle 7 practice n
	run digits

define sketchpad dot
	set duration "[DotDur]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run intro always
	run intro_practice always
	run set_time always
	run practice_loop always
	run intro_experiment always
	run digits_1 always
	run new_sketchpad always

define loop get_input
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_1

define sequence get_input_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_2 always
	run digit_input always
	run new_inline_javascript_1 always

define sketchpad get_input_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Type the digit sequence as well as you remember. <br />Press enter when done. [multichar_response]" x=0 y=0 z_index=0

define sketchpad intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="In this experiment numbers will appear on the screen one at a time. <br />You will have to memorize the sequence of numbers and type it in.<br />Sometimes there will be sound playing, so make sure your sound is on and turned up.  <br />Press any key to continue." x=8 y=-69 z_index=0

define sketchpad intro_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Now the actual experiment will begin.<br />Press any key to start" x=0 y=0 z_index=0

define sketchpad intro_practice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="First you will get a short practice round, to get familiar with the experiment.<br />Press any key to start." x=0 y=0 z_index=0

define inline_javascript new_inline_javascript_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	    vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	    vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	    vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "studiegruppe_kort.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Thank you for participating.<br />press any key to finish. " x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A 9
	setcycle 0 B 3
	setcycle 0 C 8
	setcycle 0 D 1
	setcycle 0 span 4
	setcycle 0 condition noint
	setcycle 0 correct_resp 9381
	setcycle 0 practice y
	setcycle 1 A 2
	setcycle 1 B 5
	setcycle 1 C 4
	setcycle 1 D 7
	setcycle 1 span 4
	setcycle 1 condition int
	setcycle 1 correct_resp 2547
	setcycle 1 practice y
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run create_empty_variables always
	run new_sampler "[condition] = int"
	run dot always
	run stimA_1 always
	run ISI always
	run stimB_1 always
	run ISI always
	run stimC_1 always
	run ISI always
	run stimD_1 always
	run dot always
	run Report always

define logger response_logger
	set description "Logs experimental data"
	set auto_log yes

define inline_javascript set_time
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//Set duration for each number
	vars.NumDur = 750
	
	//Set ISI
	vars.ISIdur = 500
	
	//Set time for participants to hold sequence in WM
	vars.DotDur = 2000
	__end__
	set _prepare ""

define sketchpad stimA
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[A]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimA_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[A]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimB
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[B]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimB_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[B]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimC
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[C]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimC_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[C]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimD
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[D]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimD_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[D]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimE
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[E]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimF
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[F]&nbsp;" x=0 y=0 z_index=0

define sketchpad stimG
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=45 html=yes show_if=always text="&nbsp;[G]&nbsp;" x=0 y=0 z_index=0

