---
API: 2.1
OpenSesame: 3.3.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title Forward_Backward_Serial_Recall
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Desktop/JATOS_files/ExPsyLing"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad ISI
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad arrow_image
	set duration "[ArrowDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw image center=1 file="[image]" scale=0.2 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0

define inline_javascript assign_conditions
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if(vars.subject_parity === 'even'){
	
	vars.condition = 'similar'
	
	}else {
	
	vars.condition = 'dissimilar'
	
	}
	__end__
	set _prepare ""

define sketchpad dot
	set duration "[DotDur]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run assign_conditions always
	run intro always
	run set_time_vars always
	run practice_instructions always
	run practice_instruction_2 always
	run practice_similar "[subject_parity] = even"
	run practice_dissimilar "[subject_parity] = odd"
	run experiment_instructions always
	run experiment_similar "[subject_parity] = even"
	run experiment_dissimilar "[subject_parity] = odd"
	run final_words always

define loop experiment_dissimilar
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A t
	setcycle 0 B w
	setcycle 0 C h
	setcycle 0 D h
	setcycle 0 E h
	setcycle 0 F h
	setcycle 0 G h
	setcycle 0 Span 2
	setcycle 0 Direction forward
	setcycle 0 Condition dissimilar
	setcycle 0 correct_resp tw
	setcycle 0 image "forward.png"
	setcycle 0 practice n
	setcycle 1 A m
	setcycle 1 B r
	setcycle 1 C h
	setcycle 1 D h
	setcycle 1 E h
	setcycle 1 F h
	setcycle 1 G h
	setcycle 1 Span 2
	setcycle 1 Direction forward
	setcycle 1 Condition dissimilar
	setcycle 1 correct_resp mr
	setcycle 1 image "forward.png"
	setcycle 1 practice n
	setcycle 2 A t
	setcycle 2 B k
	setcycle 2 C h
	setcycle 2 D h
	setcycle 2 E h
	setcycle 2 F h
	setcycle 2 G h
	setcycle 2 Span 2
	setcycle 2 Direction backward
	setcycle 2 Condition dissimilar
	setcycle 2 correct_resp kt
	setcycle 2 image "backward.png"
	setcycle 2 practice n
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	setcycle 4 A y
	setcycle 4 B k
	setcycle 4 C w
	setcycle 4 D h
	setcycle 4 E h
	setcycle 4 F h
	setcycle 4 G h
	setcycle 4 Span 3
	setcycle 4 Direction forward
	setcycle 4 Condition dissimilar
	setcycle 4 correct_resp ykw
	setcycle 4 image "forward.png"
	setcycle 4 practice n
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	setcycle 7 A y
	setcycle 7 B t
	setcycle 7 C m
	setcycle 7 D h
	setcycle 7 E h
	setcycle 7 F h
	setcycle 7 G h
	setcycle 7 Span 3
	setcycle 7 Direction backward
	setcycle 7 Condition dissimilar
	setcycle 7 correct_resp mty
	setcycle 7 image "backward.png"
	setcycle 7 practice n
	setcycle 8 A k
	setcycle 8 B q
	setcycle 8 C y
	setcycle 8 D m
	setcycle 8 E h
	setcycle 8 F h
	setcycle 8 G h
	setcycle 8 Span 4
	setcycle 8 Direction forward
	setcycle 8 Condition dissimilar
	setcycle 8 correct_resp kqym
	setcycle 8 image "forward.png"
	setcycle 8 practice n
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	setcycle 12 A q
	setcycle 12 B m
	setcycle 12 C q
	setcycle 12 D m
	setcycle 12 E t
	setcycle 12 F h
	setcycle 12 G h
	setcycle 12 Span 5
	setcycle 12 Direction forward
	setcycle 12 Condition dissimilar
	setcycle 12 correct_resp qmqmt
	setcycle 12 image "forward.png"
	setcycle 12 practice n
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	setcycle 14 A r
	setcycle 14 B r
	setcycle 14 C m
	setcycle 14 D m
	setcycle 14 E w
	setcycle 14 F h
	setcycle 14 G h
	setcycle 14 Span 5
	setcycle 14 Direction backward
	setcycle 14 Condition dissimilar
	setcycle 14 correct_resp wmmrr
	setcycle 14 image "backward.png"
	setcycle 14 practice n
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	setcycle 16 A w
	setcycle 16 B y
	setcycle 16 C k
	setcycle 16 D q
	setcycle 16 E r
	setcycle 16 F q
	setcycle 16 G h
	setcycle 16 Span 6
	setcycle 16 Direction forward
	setcycle 16 Condition dissimilar
	setcycle 16 correct_resp wykqrq
	setcycle 16 image "forward.png"
	setcycle 16 practice n
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	setcycle 20 A q
	setcycle 20 B m
	setcycle 20 C r
	setcycle 20 D y
	setcycle 20 E w
	setcycle 20 F t
	setcycle 20 G y
	setcycle 20 Span 7
	setcycle 20 Direction forward
	setcycle 20 Condition dissimilar
	setcycle 20 correct_resp qmrymty
	setcycle 20 image "forward.png"
	setcycle 20 practice n
	setcycle 21 A y
	setcycle 21 B y
	setcycle 21 C r
	setcycle 21 D q
	setcycle 21 E r
	setcycle 21 F q
	setcycle 21 G k
	setcycle 21 Span 7
	setcycle 21 Direction forward
	setcycle 21 Condition dissimilar
	setcycle 21 correct_resp yyrqrqk
	setcycle 21 image "forward.png"
	setcycle 21 practice n
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	setcycle 23 A m
	setcycle 23 B y
	setcycle 23 C w
	setcycle 23 D k
	setcycle 23 E q
	setcycle 23 F m
	setcycle 23 G w
	setcycle 23 Span 7
	setcycle 23 Direction backward
	setcycle 23 Condition dissimilar
	setcycle 23 correct_resp wmqkwym
	setcycle 23 image "backward.png"
	setcycle 23 practice n
	run experiment_sequence

define sketchpad experiment_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="You have now completed <br />the practice round. <br /><br />You are about to start <br />the real experiment. The<br />instructions are the same. <br /><br />Right arrow = forward<br />Left arrow = backward<br /><br />Press'return' to begin." x=0 y=0 z_index=0

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_sequence_response always
	run dot always
	run stim_A always
	run ISI always
	run stim_B always
	run ISI always
	run stim_C "[C] !=h"
	run ISI always
	run stim_D "[D] !=h"
	run ISI always
	run stim_E "[E] !=h"
	run ISI always
	run stim_F "[F] !=h"
	run ISI always
	run stim_G "[G] !=h"
	run arrow_image always
	run report_forward always
	run response_logger_forward always

define inline_javascript experiment_sequence_response
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.multichar_response = ''
	vars.response = ''
	__end__

define loop experiment_similar
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A t
	setcycle 0 B p
	setcycle 0 C h
	setcycle 0 D h
	setcycle 0 E h
	setcycle 0 F h
	setcycle 0 G h
	setcycle 0 span 2
	setcycle 0 direction forward
	setcycle 0 condition similar
	setcycle 0 correct_resp tp
	setcycle 0 image "forward.png"
	setcycle 0 practice n
	setcycle 1 A b
	setcycle 1 B v
	setcycle 1 C h
	setcycle 1 D h
	setcycle 1 E h
	setcycle 1 F h
	setcycle 1 G h
	setcycle 1 span 2
	setcycle 1 direction forward
	setcycle 1 condition similar
	setcycle 1 correct_resp bv
	setcycle 1 image "forward.png"
	setcycle 1 practice n
	setcycle 2 A g
	setcycle 2 B v
	setcycle 2 C h
	setcycle 2 D h
	setcycle 2 E h
	setcycle 2 F h
	setcycle 2 G h
	setcycle 2 span 2
	setcycle 2 direction backward
	setcycle 2 condition similar
	setcycle 2 correct_resp vg
	setcycle 2 image "backward.png"
	setcycle 2 practice n
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	setcycle 7 A v
	setcycle 7 B p
	setcycle 7 C b
	setcycle 7 D h
	setcycle 7 E h
	setcycle 7 F h
	setcycle 7 G h
	setcycle 7 span 3
	setcycle 7 direction backward
	setcycle 7 condition similar
	setcycle 7 correct_resp bpv
	setcycle 7 image "backward.png"
	setcycle 7 practice n
	setcycle 8 A g
	setcycle 8 B d
	setcycle 8 C c
	setcycle 8 D t
	setcycle 8 E h
	setcycle 8 F h
	setcycle 8 G h
	setcycle 8 span 4
	setcycle 8 direction forward
	setcycle 8 condition similar
	setcycle 8 correct_resp gdct
	setcycle 8 image "forward.png"
	setcycle 8 practice n
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	setcycle 16 A b
	setcycle 16 B v
	setcycle 16 C v
	setcycle 16 D t
	setcycle 16 E g
	setcycle 16 F c
	setcycle 16 G h
	setcycle 16 span 6
	setcycle 16 direction forward
	setcycle 16 condition similar
	setcycle 16 correct_resp bvvtgc
	setcycle 16 image "forward.png"
	setcycle 16 practice n
	setcycle 17 A g
	setcycle 17 B t
	setcycle 17 C b
	setcycle 17 D v
	setcycle 17 E c
	setcycle 17 F p
	setcycle 17 G h
	setcycle 17 span 6
	setcycle 17 direction forward
	setcycle 17 condition similar
	setcycle 17 correct_resp gtbvcp
	setcycle 17 image "forward.png"
	setcycle 17 practice n
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	setcycle 19 A d
	setcycle 19 B g
	setcycle 19 C t
	setcycle 19 D c
	setcycle 19 E d
	setcycle 19 F v
	setcycle 19 G h
	setcycle 19 span 6
	setcycle 19 direction backward
	setcycle 19 condition similar
	setcycle 19 correct_resp vdctgd
	setcycle 19 image "backward.png"
	setcycle 19 practice n
	setcycle 20 A c
	setcycle 20 B d
	setcycle 20 C b
	setcycle 20 D v
	setcycle 20 E c
	setcycle 20 F v
	setcycle 20 G g
	setcycle 20 span 7
	setcycle 20 direction forward
	setcycle 20 condition similar
	setcycle 20 correct_resp cdbvcvg
	setcycle 20 image "forward.png"
	setcycle 20 practice n
	setcycle 21 A b
	setcycle 21 B c
	setcycle 21 C t
	setcycle 21 D c
	setcycle 21 E p
	setcycle 21 F t
	setcycle 21 G v
	setcycle 21 span 7
	setcycle 21 direction forward
	setcycle 21 condition similar
	setcycle 21 correct_resp bctcptv
	setcycle 21 image "forward.png"
	setcycle 21 practice n
	setcycle 22 A d
	setcycle 22 B v
	setcycle 22 C t
	setcycle 22 D g
	setcycle 22 E v
	setcycle 22 F t
	setcycle 22 G p
	setcycle 22 span 7
	setcycle 22 direction backward
	setcycle 22 condition similar
	setcycle 22 correct_resp ptvgtvd
	setcycle 22 image "backward.png"
	setcycle 22 practice n
	setcycle 23 A d
	setcycle 23 B p
	setcycle 23 C g
	setcycle 23 D b
	setcycle 23 E t
	setcycle 23 F p
	setcycle 23 G d
	setcycle 23 span 7
	setcycle 23 direction backward
	setcycle 23 condition similar
	setcycle 23 correct_resp dptbgpd
	setcycle 23 image "backward.png"
	setcycle 23 practice n
	run experiment_sequence

define sketchpad final_words
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="You have completed the experiment. <br /><br />Thank you for your participation :)<br /><br /><br />Press 'return'<br />to end the experiment." x=0 y=0 z_index=0

define keyboard_response input_forward_entry
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad input_forward_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Type what you remember <br />from the sequence in <br />the right order, according <br />to the direction of the <br />arrow you were just shown. <br /><br />Right = forward<br />Left = backward<br /><br />Press 'return' when done.<br /><br />[multichar_response]" x=0 y=0 z_index=0

define loop input_forward_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run input_forward_sequence

define sequence input_forward_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run input_forward_instructions always
	run input_forward_entry always
	run process_input_forward always

define keyboard_response input_practice_entry
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad input_practice_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Type what you remember <br />from the sequence in <br />the right order, according <br />to the direction of the <br />arrow you were just shown. <br /><br />Right = forward<br />Left = backward <br /><br />Press 'return' when done.<br /><br />[multichar_response]" x=0 y=0 z_index=0

define loop input_practice_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run input_practice_sequence

define sequence input_practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run input_practice_instructions always
	run input_practice_entry always
	run process_input_practice always

define sketchpad intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Welcome to the forward <br />and backward recall experiment. <br /><br />In this experiment, <br />you will have to recall <br />sequences of letters in <br />a forward and backward order. <br /><br />There will be a short <br />practice round. Then, <br />the experiment will begin.<br /><br />Press 'return' to continue." x=0 y=0 z_index=0

define loop practice_dissimilar
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A y
	setcycle 0 B q
	setcycle 0 C h
	setcycle 0 D h
	setcycle 0 E h
	setcycle 0 span 2
	setcycle 0 direction backward
	setcycle 0 condition dissimilar
	setcycle 0 correct_resp qy
	setcycle 0 image "backward.png"
	setcycle 0 practice y
	setcycle 1 A t
	setcycle 1 B r
	setcycle 1 C m
	setcycle 1 D h
	setcycle 1 E h
	setcycle 1 span 3
	setcycle 1 direction backward
	setcycle 1 condition dissimilar
	setcycle 1 correct_resp mrt
	setcycle 1 image "backward.png"
	setcycle 1 practice y
	setcycle 2 A w
	setcycle 2 B y
	setcycle 2 C w
	setcycle 2 D m
	setcycle 2 E h
	setcycle 2 span 4
	setcycle 2 direction forward
	setcycle 2 condition dissimilar
	setcycle 2 correct_resp wywm
	setcycle 2 image "forward.png"
	setcycle 2 practice y
	setcycle 3 A k
	setcycle 3 B r
	setcycle 3 C q
	setcycle 3 D y
	setcycle 3 E h
	setcycle 3 span 4
	setcycle 3 direction backward
	setcycle 3 condition dissimilar
	setcycle 3 correct_resp yqrk
	setcycle 3 image "backward.png"
	setcycle 3 practice y
	setcycle 4 A k
	setcycle 4 B k
	setcycle 4 C y
	setcycle 4 D w
	setcycle 4 E m
	setcycle 4 span 5
	setcycle 4 direction forward
	setcycle 4 condition dissimilar
	setcycle 4 correct_resp kkywm
	setcycle 4 image "forward.png"
	setcycle 4 practice y
	setcycle 5 A w
	setcycle 5 B t
	setcycle 5 C k
	setcycle 5 D y
	setcycle 5 E w
	setcycle 5 span 5
	setcycle 5 direction backward
	setcycle 5 condition dissimilar
	setcycle 5 correct_resp wyktw
	setcycle 5 image "backward.png"
	setcycle 5 practice y
	run practice_sequence

define inline_javascript practice_forward_response
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.multichar_response = ''
	vars.response = ''
	__end__

define sketchpad practice_instruction_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="A right arrow means <br />forward recall. E.g. if <br />the sequence of letters is <br />abcdef, you should type abcdef.<br /><br /><br /><br />A left arrow means <br />backward recall. E.g., if <br />the sequence of letters is <br />abcdef, you should type fedcba.<br /><br /><br /><br />Press 'return' to begin." x=0 y=0 z_index=0
	draw image center=1 file="forward.png" scale=0.2 show_if=always x=0 y=-64 z_index=0
	draw image center=1 file="backward.png" scale=0.2 show_if=always x=0 y=192 z_index=0

define sketchpad practice_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=31 html=yes show_if=always text="The following round <br />will be a short practice round. <br /><br />Sequences of letters <br />will appear, followed by <br />the image of an arrow. <br /><br />Press 'return' to continue. " x=0 y=0 z_index=0

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practice_forward_response always
	run dot always
	run stim_A always
	run ISI always
	run stim_B always
	run ISI always
	run stim_C "[C] !=h"
	run ISI always
	run stim_D "[D] !=h"
	run ISI always
	run stim_E "[E] !=h"
	run arrow_image always
	run report_practice always
	run response_logger_practice always

define loop practice_similar
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A v
	setcycle 0 B b
	setcycle 0 C h
	setcycle 0 D h
	setcycle 0 E h
	setcycle 0 span 2
	setcycle 0 direction forward
	setcycle 0 condition similar
	setcycle 0 correct_resp vb
	setcycle 0 image "forward.png"
	setcycle 0 practice y
	setcycle 1 A t
	setcycle 1 B b
	setcycle 1 C c
	setcycle 1 D h
	setcycle 1 E h
	setcycle 1 span 3
	setcycle 1 direction forward
	setcycle 1 condition similar
	setcycle 1 correct_resp tbc
	setcycle 1 image "forward.png"
	setcycle 1 practice y
	setcycle 2 A c
	setcycle 2 B g
	setcycle 2 C p
	setcycle 2 D p
	setcycle 2 E h
	setcycle 2 span 4
	setcycle 2 direction forward
	setcycle 2 condition similar
	setcycle 2 correct_resp cgpp
	setcycle 2 image "forward.png"
	setcycle 2 practice y
	setcycle 3 A t
	setcycle 3 B v
	setcycle 3 C b
	setcycle 3 D d
	setcycle 3 E h
	setcycle 3 span 4
	setcycle 3 direction backward
	setcycle 3 condition similar
	setcycle 3 correct_resp dbvt
	setcycle 3 image "backward.png"
	setcycle 3 practice y
	setcycle 4 A v
	setcycle 4 B d
	setcycle 4 C g
	setcycle 4 D v
	setcycle 4 E c
	setcycle 4 span 5
	setcycle 4 direction forward
	setcycle 4 condition similar
	setcycle 4 correct_resp vdgvc
	setcycle 4 image "forward.png"
	setcycle 4 practice y
	setcycle 5 A b
	setcycle 5 B t
	setcycle 5 C v
	setcycle 5 D t
	setcycle 5 E d
	setcycle 5 span 5
	setcycle 5 direction backward
	setcycle 5 condition similar
	setcycle 5 correct_resp dtvtb
	setcycle 5 image "backward.png"
	setcycle 5 practice y
	run practice_sequence

define inline_javascript process_input_forward
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	    vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	    vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	    vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define inline_javascript process_input_practice
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	    vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	    vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	    vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define sequence report_forward
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run input_forward_loop always

define sequence report_practice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run input_practice_loop always

define logger response_logger_forward
	set description "Logs experimental data"
	set auto_log yes

define logger response_logger_practice
	set description "Logs experimental data"
	set auto_log yes

define inline_javascript set_time_vars
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Set duration for each number
	vars.NumDur = 1000
	
	//Set ISI
	vars.ISIdur = 500
	
	//Set time for participants to hold sequence in WM
	vars.DotDur = 3000
	
	//Set duration for the arrows
	vars.ArrowDur = 1000
	__end__

define sketchpad stim_A
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[A]" x=0 y=0 z_index=0

define sketchpad stim_B
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[B]" x=0 y=0 z_index=0

define sketchpad stim_C
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[C]" x=0 y=0 z_index=0

define sketchpad stim_D
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[D]" x=0 y=0 z_index=0

define sketchpad stim_E
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[E]" x=0 y=0 z_index=0

define sketchpad stim_F
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[F]" x=0 y=0 z_index=0

define sketchpad stim_G
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[G]" x=0 y=0 z_index=0

