---
API: 2.1
OpenSesame: 3.3.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 20
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\katri\\OneDrive\\Dokumenter\\MSc in Cognitive Semiotics\\Experimental Psycholinguistics"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#000000"

define sketchpad ENd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Well done!<br /><br />You have now finished the test.<br /><br />Press space to exit the test<br /><br />Thank you for your time!<br />" x=0 y=0 z_index=0

define sketchpad ISI_1
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_10
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_11
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_12
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_13
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_2
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_3
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_4
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_5
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_6
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_7
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_8
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad ISI_9
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sketchpad Instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="First, you will be presented a sequence of letters you are asked to remember.<br />Next, you will have so solve a simple math question as fast as possible.<br />Then you will be asked to write down the letter sequence.<br /><br />Press spacebar to begin<br />" x=0 y=0 z_index=0

define loop Stroop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word red
	setcycle 0 colour blue
	setcycle 0 congruent 0
	setcycle 0 correct_resp b
	setcycle 0 task stroop
	setcycle 0 neutral no
	setcycle 1 word red
	setcycle 1 colour red
	setcycle 1 congruent 1
	setcycle 1 correct_resp r
	setcycle 1 task stroop
	setcycle 1 neutral no
	setcycle 2 word blue
	setcycle 2 colour blue
	setcycle 2 congruent 1
	setcycle 2 correct_resp b
	setcycle 2 task stroop
	setcycle 2 neutral no
	setcycle 3 word blue
	setcycle 3 colour yellow
	setcycle 3 congruent 0
	setcycle 3 correct_resp y
	setcycle 3 task stroop
	setcycle 3 neutral no
	setcycle 4 word yellow
	setcycle 4 colour red
	setcycle 4 congruent 0
	setcycle 4 correct_resp r
	setcycle 4 task stroop
	setcycle 4 neutral no
	setcycle 5 word yellow
	setcycle 5 colour yellow
	setcycle 5 congruent 1
	setcycle 5 correct_resp y
	setcycle 5 task stroop
	setcycle 5 neutral no
	setcycle 6 word green
	setcycle 6 colour green
	setcycle 6 congruent 1
	setcycle 6 correct_resp g
	setcycle 6 task stroop
	setcycle 6 neutral no
	setcycle 7 word green
	setcycle 7 colour blue
	setcycle 7 congruent 0
	setcycle 7 correct_resp b
	setcycle 7 task stroop
	setcycle 7 neutral no
	setcycle 8 word people
	setcycle 8 colour green
	setcycle 8 congruent 2
	setcycle 8 correct_resp g
	setcycle 8 task stroop
	setcycle 8 neutral yes
	setcycle 9 word history
	setcycle 9 colour yellow
	setcycle 9 congruent 2
	setcycle 9 correct_resp y
	setcycle 9 task stroop
	setcycle 9 neutral yes
	setcycle 10 word way
	setcycle 10 colour blue
	setcycle 10 congruent 2
	setcycle 10 correct_resp b
	setcycle 10 task stroop
	setcycle 10 neutral yes
	setcycle 11 word art
	setcycle 11 colour green
	setcycle 11 congruent 2
	setcycle 11 correct_resp g
	setcycle 11 task stroop
	setcycle 11 neutral yes
	setcycle 12 word world
	setcycle 12 colour red
	setcycle 12 congruent 2
	setcycle 12 correct_resp r
	setcycle 12 task stroop
	setcycle 12 neutral yes
	setcycle 13 word information
	setcycle 13 colour blue
	setcycle 13 congruent 2
	setcycle 13 correct_resp b
	setcycle 13 task stroop
	setcycle 13 neutral yes
	setcycle 14 word map
	setcycle 14 colour green
	setcycle 14 congruent 2
	setcycle 14 correct_resp g
	setcycle 14 task stroop
	setcycle 14 neutral yes
	setcycle 15 word two
	setcycle 15 colour yellow
	setcycle 15 congruent 2
	setcycle 15 correct_resp y
	setcycle 15 task stroop
	setcycle 15 neutral yes
	run stroopseq

define logger Stroop_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Stroopinstructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Next, you will perform a Stroop task.<br /><br />You are asked to report the colour-hue in which a word is presented.<br /><br />The possible hues are: Red (R), Blue (B), Green (G), Yellow (Y).<br /><br />Please orientate the appropriate keys on your keyboard<br />and keep a finger ready at R, B, G, Y<br />so you can press as fast as possible<br /><br />E.g. the word RED is presented in a green hue.<br />The correct key to press is, therefore, G for green. <br /><br />Press spacebar to begin the Stroop Task" x=0 y=0 z_index=0

define sketchpad WMCfix
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sequence WMCseq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run WMCfix always
	run letter always
	run equation always
	run equationkey always
	run letter2 always
	run textinput always
	run letterkey always

define loop WMCtest
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 equation "(5 + 6) - 9 = ?"
	setcycle 0 letter "A K G"
	setcycle 0 correct_answer "A;K;G"
	setcycle 0 lenght 3
	setcycle 1 equation "2 - (6 / 3) = ? "
	setcycle 1 letter "O H R T "
	setcycle 1 correct_answer "O;H;R;T"
	setcycle 1 lenght 4
	setcycle 2 equation "(5 + 5) - 4 = ?"
	setcycle 2 letter "H J Z F G"
	setcycle 2 correct_answer "H;J;Z;F;G"
	setcycle 2 lenght 5
	setcycle 3 equation "(7 + 8) / 3 = ?"
	setcycle 3 letter "H U P C J"
	setcycle 3 correct_answer "H;U;P;C;J"
	setcycle 3 lenght 5
	setcycle 4 equation "( 9 + 3 + 1) - 6 = ?"
	setcycle 4 letter "K P Q V"
	setcycle 4 correct_answer "K;P;Q;V"
	setcycle 4 lenght 4
	setcycle 5 equation "(6 - 1 - 4) + 2 = ?"
	setcycle 5 letter "H J"
	setcycle 5 correct_answer "H;J"
	setcycle 5 lenght 2
	setcycle 6 equation "(7 + 2) - 3 - 1 = ?"
	setcycle 6 letter "O E W J "
	setcycle 6 correct_answer "O;E;W;J"
	setcycle 6 lenght 4
	setcycle 7 equation "(9 - 0 - 1) / (6 - 4) = ?"
	setcycle 7 letter "O J K T C H"
	setcycle 7 correct_answer "O;J;K;T;C;H"
	setcycle 7 lenght 6
	setcycle 8 equation "4 + 6 - 7 = ? "
	setcycle 8 letter "U Y G X L B"
	setcycle 8 correct_answer "U;Y;G;X;L;B"
	setcycle 8 lenght 6
	setcycle 9 equation "11 - 12 + 6 = ?"
	setcycle 9 letter "P Q Y S A J F"
	setcycle 9 correct_answer "P;Q;Y;S;A;J;F"
	setcycle 9 lenght 7
	setcycle 10 equation "7 + 9 + 2 - 5 = ?"
	setcycle 10 letter "L G Y R E P B"
	setcycle 10 correct_answer "L;G;Y;R;E;P;B"
	setcycle 10 lenght 7
	setcycle 11 equation "18 / (2 + 8 - 1) = ?"
	setcycle 11 letter "G I S D P H Y H "
	setcycle 11 correct_answer "G;I;S;D;P;H;Y;H"
	setcycle 11 lenght 8
	setcycle 12 equation "(2 + 2) / 1 = ?"
	setcycle 12 letter "K H F V"
	setcycle 12 correct_answer "K;H;F;V"
	setcycle 12 lenght 4
	setcycle 13 equation "8 + 10 - 6 - 2 = ?"
	setcycle 13 letter "P G H E S J J W"
	setcycle 13 correct_answer "P;G;H;E;S;J;J;W"
	setcycle 13 lenght 8
	setcycle 14 equation "(6 - 2) / (1 + 1) = ?"
	setcycle 14 letter "U G E W M B H I T G"
	setcycle 14 correct_answer "U;G;E;W;M;B;H;I;T;G"
	setcycle 14 lenght 10
	run WMCseq

define sketchpad Warning
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="In this test, you will be presented with some non-colour words as well.<br />At the end of this test, you will be asked to recall these words.<br /><br />Please pay attention to the non-colour words<br />as you will be tested on them later.<br /><br />Press spacebar to begin the task<br />" x=0 y=0 z_index=0

define sketchpad Welcome_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Welcome to the experiment!<br /><br />This experiment consists of several parts and will take 10 - 15 minutes to complete<br /><br />Click the spacebar, to begin with, the first part" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0

define sketchpad cutedog
	set duration 700
	set description "Displays stimuli"
	draw image center=1 file="dog.jpg" scale=1.7000000000000006 show_if=always x=0 y=0 z_index=0

define loop digit_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A 3
	setcycle 0 B 9
	setcycle 0 C 5
	setcycle 0 D w
	setcycle 0 E w
	setcycle 0 F w
	setcycle 0 G w
	setcycle 0 H w
	setcycle 0 span 3
	setcycle 0 condition numbers
	setcycle 0 correct 395
	setcycle 1 A 1
	setcycle 1 B 8
	setcycle 1 C 3
	setcycle 1 D w
	setcycle 1 E w
	setcycle 1 F w
	setcycle 1 G w
	setcycle 1 H w
	setcycle 1 span 3
	setcycle 1 condition numbers
	setcycle 1 correct 183
	setcycle 2 A 6
	setcycle 2 B 5
	setcycle 2 C 5
	setcycle 2 D 4
	setcycle 2 E w
	setcycle 2 F w
	setcycle 2 G w
	setcycle 2 H w
	setcycle 2 span 4
	setcycle 2 condition numbers
	setcycle 2 correct 6554
	setcycle 3 A 5
	setcycle 3 B 5
	setcycle 3 C 5
	setcycle 3 D 1
	setcycle 3 E w
	setcycle 3 F w
	setcycle 3 G w
	setcycle 3 H w
	setcycle 3 span 4
	setcycle 3 condition numbers
	setcycle 3 correct 5551
	setcycle 4 A 5
	setcycle 4 B 2
	setcycle 4 C 4
	setcycle 4 D 1
	setcycle 4 E 2
	setcycle 4 F w
	setcycle 4 G w
	setcycle 4 H w
	setcycle 4 span 5
	setcycle 4 condition numbers
	setcycle 4 correct 52412
	setcycle 5 A 2
	setcycle 5 B 9
	setcycle 5 C 6
	setcycle 5 D 4
	setcycle 5 E 6
	setcycle 5 F w
	setcycle 5 G w
	setcycle 5 H w
	setcycle 5 span 5
	setcycle 5 condition numbers
	setcycle 5 correct 29646
	setcycle 6 A 4
	setcycle 6 B 3
	setcycle 6 C 3
	setcycle 6 D 6
	setcycle 6 E 4
	setcycle 6 F 5
	setcycle 6 G w
	setcycle 6 H w
	setcycle 6 span 6
	setcycle 6 condition numbers
	setcycle 6 correct 433645
	setcycle 7 A 3
	setcycle 7 B 1
	setcycle 7 C 8
	setcycle 7 D 4
	setcycle 7 E 4
	setcycle 7 F 4
	setcycle 7 G w
	setcycle 7 H w
	setcycle 7 span 6
	setcycle 7 condition numbers
	setcycle 7 correct 318444
	setcycle 8 A 6
	setcycle 8 B 3
	setcycle 8 C 9
	setcycle 8 D 9
	setcycle 8 E 6
	setcycle 8 F 5
	setcycle 8 G 4
	setcycle 8 H w
	setcycle 8 span 7
	setcycle 8 condition numbers
	setcycle 8 correct 6399654
	setcycle 9 A 9
	setcycle 9 B 6
	setcycle 9 C 1
	setcycle 9 D 8
	setcycle 9 E 5
	setcycle 9 F 3
	setcycle 9 G 4
	setcycle 9 H w
	setcycle 9 span 7
	setcycle 9 condition numbers
	setcycle 9 correct 9618534
	run trial_sequence_1

define sketchpad dot_1
	set duration "[DotDur]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad endofWMC
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Well done!<br /><br />This was part 1 of the test. Feel free to take a break before you continue. <br /><br />Press space to begin the next part" x=0 y=0 z_index=0

define sketchpad endofstroop
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Well done<br /><br />This was part 2 of the experiment.<br />Please press the spacebar to continue to part 3" x=0 y=0 z_index=0

define sketchpad equation
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[equation]" x=0 y=0 z_index=0

define sketchpad equation_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[equation]" x=0 y=0 z_index=0

define keyboard_response equationkey
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_1 always

define sequence experiment_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_1 alsway
	run Instructions always
	run set_time_vars always
	run letter_loop_1 always
	run endofWMC always
	run Stroopinstructions always
	run Warning "[subject_parity] = even"
	run Stroop always
	run endofstroop always
	run instructionmemory always
	run memory always
	run ENd always
	run cutedog always

define sketchpad fixcation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad get_input_digits
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Type what you remember<br /><br />Press 'return' when done<br /><br />[multichar_response]" x=0 y=0 z_index=0

define sketchpad get_input_letters
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Type what you remember from the presented letter sequence<br /><br />Press 'return' when done<br /><br />[multichar_response]" x=0 y=0 z_index=0

define loop get_input_loop_1
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence_1

define loop get_input_loop_2
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_input_sequence_2

define sequence get_input_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_digits always
	run number_input_1 always
	run process_input_1 always

define sequence get_input_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_letters always
	run number_input_2 always
	run process_input_2 always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_javascript init_1
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.multichar_response = ''
	vars.response = ''
	__end__

define inline_javascript init_2
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.multichar_response = ''
	vars.response = ''
	__end__

define sketchpad instructionmemory
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="As you may have noticed <br />some of the words in the Stroop task were non-colour words. <br /><br />You will now be presented with some words. <br />Your task is to identify whether they were included in the Stroop task or not. <br /><br />Please press (Y) for Yes, if you have seen the word before<br /><br />Press (N) for No, if you have not seen the word before<br /><br />Press space to begin the memory task" x=0 y=0 z_index=0

define sketchpad intro_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this experiment you will see a sequence of either numbers or letters.<br /><br />Your job will be to remember those numbers or letters in order, and type them in.<br /><br />After you have them in, press RETURN to continue.<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad letter
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[letter]<br />" x=0 y=0 z_index=0

define sketchpad letter2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please type the letter sequence presented earlier below: <br /><br />" x=0 y=0 z_index=0

define loop letter_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A v
	setcycle 0 B j
	setcycle 0 C y
	setcycle 0 D w
	setcycle 0 E w
	setcycle 0 F w
	setcycle 0 G w
	setcycle 0 H w
	setcycle 0 span 3
	setcycle 0 condition letters
	setcycle 0 correct vjy
	setcycle 0 equation "(5 + 6) - 9 = ?"
	setcycle 0 task letters
	setcycle 1 A z
	setcycle 1 B v
	setcycle 1 C y
	setcycle 1 D w
	setcycle 1 E w
	setcycle 1 F w
	setcycle 1 G w
	setcycle 1 H w
	setcycle 1 span 3
	setcycle 1 condition letters
	setcycle 1 correct zvy
	setcycle 1 equation "2 - (6 / 3) = ? "
	setcycle 1 task letters
	setcycle 2 A z
	setcycle 2 B x
	setcycle 2 C m
	setcycle 2 D y
	setcycle 2 E w
	setcycle 2 F w
	setcycle 2 G w
	setcycle 2 H w
	setcycle 2 span 4
	setcycle 2 condition letters
	setcycle 2 correct zxmy
	setcycle 2 equation "(5 + 5) - 4 = ?"
	setcycle 2 task letters
	setcycle 3 A t
	setcycle 3 B q
	setcycle 3 C t
	setcycle 3 D f
	setcycle 3 E w
	setcycle 3 F w
	setcycle 3 G w
	setcycle 3 H w
	setcycle 3 span 4
	setcycle 3 condition letters
	setcycle 3 correct tqtf
	setcycle 3 equation "(7 + 8) / 3 = ?"
	setcycle 3 task letters
	setcycle 4 A d
	setcycle 4 B y
	setcycle 4 C v
	setcycle 4 D f
	setcycle 4 E x
	setcycle 4 F w
	setcycle 4 G w
	setcycle 4 H w
	setcycle 4 span 5
	setcycle 4 condition letters
	setcycle 4 correct dyvf
	setcycle 4 equation "( 9 + 3 + 1) - 6 = ?"
	setcycle 4 task letters
	setcycle 5 A i
	setcycle 5 B m
	setcycle 5 C v
	setcycle 5 D t
	setcycle 5 E k
	setcycle 5 F w
	setcycle 5 G w
	setcycle 5 H w
	setcycle 5 span 5
	setcycle 5 condition letters
	setcycle 5 correct imvtk
	setcycle 5 equation "(6 - 1 - 4) + 2 = ?"
	setcycle 5 task letters
	setcycle 6 A g
	setcycle 6 B r
	setcycle 6 C y
	setcycle 6 D p
	setcycle 6 E y
	setcycle 6 F r
	setcycle 6 G w
	setcycle 6 H w
	setcycle 6 span 6
	setcycle 6 condition letters
	setcycle 6 correct grypyr
	setcycle 6 equation "(7 + 2) - 3 - 1 = ?"
	setcycle 6 task letters
	setcycle 7 A i
	setcycle 7 B m
	setcycle 7 C u
	setcycle 7 D u
	setcycle 7 E e
	setcycle 7 F r
	setcycle 7 G w
	setcycle 7 H w
	setcycle 7 span 6
	setcycle 7 condition letters
	setcycle 7 correct imuuer
	setcycle 7 equation "(9 - 0 - 1) / (6 - 4) = ?"
	setcycle 7 task letters
	setcycle 8 A v
	setcycle 8 B e
	setcycle 8 C z
	setcycle 8 D g
	setcycle 8 E s
	setcycle 8 F q
	setcycle 8 G l
	setcycle 8 H w
	setcycle 8 span 7
	setcycle 8 condition letters
	setcycle 8 correct vezgsql
	setcycle 8 equation "4 + 6 - 7 = ? "
	setcycle 8 task letters
	setcycle 9 A u
	setcycle 9 B p
	setcycle 9 C t
	setcycle 9 D x
	setcycle 9 E i
	setcycle 9 F p
	setcycle 9 G f
	setcycle 9 H w
	setcycle 9 span 7
	setcycle 9 condition letters
	setcycle 9 correct uptxipf
	setcycle 9 equation "11 - 12 + 6 = ?"
	setcycle 9 task letters
	run trial_sequence_2

define keyboard_response letterkey
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[letter]"

define loop memory
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word people
	setcycle 0 correct_resp y
	setcycle 0 task memory
	setcycle 1 word history
	setcycle 1 correct_resp y
	setcycle 1 task memory
	setcycle 2 word way
	setcycle 2 correct_resp y
	setcycle 2 task memory
	setcycle 3 word art
	setcycle 3 correct_resp y
	setcycle 3 task memory
	setcycle 4 word world
	setcycle 4 correct_resp y
	setcycle 4 task memory
	setcycle 5 word information
	setcycle 5 correct_resp y
	setcycle 5 task memory
	setcycle 6 word map
	setcycle 6 correct_resp y
	setcycle 6 task memory
	setcycle 7 word two
	setcycle 7 correct_resp y
	setcycle 7 task memory
	setcycle 8 word family
	setcycle 8 correct_resp n
	setcycle 8 task memory
	setcycle 9 word government
	setcycle 9 correct_resp n
	setcycle 9 task memory
	setcycle 10 word health
	setcycle 10 correct_resp n
	setcycle 10 task memory
	setcycle 11 word system
	setcycle 11 correct_resp n
	setcycle 11 task memory
	setcycle 12 word computer
	setcycle 12 correct_resp n
	setcycle 12 task memory
	setcycle 13 word meat
	setcycle 13 correct_resp n
	setcycle 13 task memory
	setcycle 14 word year
	setcycle 14 correct_resp n
	setcycle 14 task memory
	setcycle 15 word thanks
	setcycle 15 correct_resp n
	setcycle 15 task memory
	run memoryseq

define sketchpad memoryfix
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define keyboard_response memoryfixed
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses "y;n"

define logger memorylog
	set description "Logs experimental data"
	set auto_log yes

define sequence memoryseq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run memoryfix always
	run memoryword always
	run memoryfixed always
	run memorylog always

define sketchpad memoryword
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

define coroutines new_coroutines
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 5000
	set description "Run items simultaneously"
	run new_sketchpad_4 end=0 runif=always start=0

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.subject_nr % 2 == 0:
	  var.subject_group = 'A'
	elif var.subject_nr % 2 == 1:
	  var.subject_group = 'B'
	__end__

define inline_script new_inline_script_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.subject_nr % 2 == 0:
	  var.subject_group = 'A'
	elif var.subject_nr % 2 == 1:
	  var.subject_group = 'B'
	__end__

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses "r; b; y; g"

define keyboard_response new_keyboard_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_2
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_3
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 25
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word red
	setcycle 0 colour blue
	setcycle 0 congruent 0
	setcycle 0 correct_resp b
	setcycle 1 word red
	setcycle 1 colour red
	setcycle 1 congruent 1
	setcycle 1 correct_resp r
	setcycle 2 word blue
	setcycle 2 colour blue
	setcycle 2 congruent 1
	setcycle 2 correct_resp b
	setcycle 3 word blue
	setcycle 3 colour yellow
	setcycle 3 congruent 0
	setcycle 3 correct_resp y
	setcycle 4 word yellow
	setcycle 4 colour red
	setcycle 4 congruent 0
	setcycle 4 correct_resp r
	setcycle 5 word yellow
	setcycle 5 colour yellow
	setcycle 5 congruent 1
	setcycle 5 correct_resp y
	setcycle 6 word green
	setcycle 6 colour green
	setcycle 6 congruent 1
	setcycle 6 correct_resp g
	setcycle 7 word green
	setcycle 7 colour blue
	setcycle 7 congruent 0
	setcycle 7 correct_resp b
	setcycle 8 word people
	setcycle 8 colour green
	setcycle 8 congruent 2
	setcycle 8 correct_resp g
	setcycle 9 word history
	setcycle 9 colour yellow
	setcycle 9 congruent 2
	setcycle 9 correct_resp y
	setcycle 10 word way
	setcycle 10 colour blue
	setcycle 10 congruent 2
	setcycle 10 correct_resp b
	setcycle 11 word art
	setcycle 11 colour green
	setcycle 11 congruent 2
	setcycle 11 correct_resp g
	setcycle 12 word world
	setcycle 12 colour red
	setcycle 12 congruent 2
	setcycle 12 correct_resp r
	setcycle 13 word information
	setcycle 13 colour blue
	setcycle 13 congruent 2
	setcycle 13 correct_resp b
	setcycle 14 word map
	setcycle 14 colour green
	setcycle 14 congruent 2
	setcycle 14 correct_resp g
	setcycle 15 word two
	setcycle 15 colour yellow
	setcycle 15 congruent 2
	setcycle 15 correct_resp y
	setcycle 16 word ""
	setcycle 16 colour ""
	setcycle 16 congruent ""
	setcycle 16 correct_resp ""
	setcycle 17 word ""
	setcycle 17 colour ""
	setcycle 17 congruent ""
	setcycle 17 correct_resp ""
	setcycle 18 word ""
	setcycle 18 colour ""
	setcycle 18 congruent ""
	setcycle 18 correct_resp ""
	setcycle 19 word ""
	setcycle 19 colour ""
	setcycle 19 congruent ""
	setcycle 19 correct_resp ""
	setcycle 20 word ""
	setcycle 20 colour ""
	setcycle 20 congruent ""
	setcycle 20 correct_resp ""
	setcycle 21 word ""
	setcycle 21 colour ""
	setcycle 21 congruent ""
	setcycle 21 correct_resp ""
	setcycle 22 word ""
	setcycle 22 colour ""
	setcycle 22 congruent ""
	setcycle 22 correct_resp ""
	setcycle 23 word ""
	setcycle 23 colour ""
	setcycle 23 congruent ""
	setcycle 23 correct_resp ""
	setcycle 24 word ""
	setcycle 24 colour ""
	setcycle 24 congruent ""
	setcycle 24 correct_resp ""
	run new_sequence

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixcation always
	run word always
	run new_keyboard_response always
	run new_logger always

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_3
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_4
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_5
	set duration keypress
	set description "Displays stimuli"

define keyboard_response number_input_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response number_input_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define inline_javascript process_input_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	    vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	    vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	    vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define inline_javascript process_input_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response != 'backspace') {
	    vars.multichar_response += vars.response.toString()
	} else if (vars.response === 'backspace') {
	    vars.multichar_response = vars.multichar_response.toString().slice(0, vars.multichar_response.toString().length - 1)
	} else if (vars.response !== 'enter') {
	    vars.multichar_response += vars.response
	}
	__end__
	set _prepare ""

define sequence report_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop_1 always

define sequence report_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_input_loop_2 always

define inline_javascript set_time_vars
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	
	//Set duration for each number
	vars.NumDur = 750
	
	//Set ISI
	vars.ISIdur = 500
	
	//Set time for participants to hold sequence in WM
	vars.DotDur = 3000
	__end__

define sketchpad stimA_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[A]" x=0 y=0 z_index=0

define sketchpad stimA_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[A]" x=0 y=0 z_index=0

define sketchpad stimB_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[B]" x=0 y=0 z_index=0

define sketchpad stimB_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[B]" x=0 y=0 z_index=0

define sketchpad stimC_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[C]" x=0 y=0 z_index=0

define sketchpad stimC_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[C]" x=0 y=0 z_index=0

define sketchpad stimD_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[D]" x=0 y=0 z_index=0

define sketchpad stimD_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[D]" x=0 y=0 z_index=0

define sketchpad stimE_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[E]" x=0 y=0 z_index=0

define sketchpad stimE_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[E]" x=0 y=0 z_index=0

define sketchpad stimF_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[F]" x=0 y=0 z_index=0

define sketchpad stimF_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[F]" x=0 y=0 z_index=0

define sketchpad stimG_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[G]" x=0 y=0 z_index=0

define sketchpad stimG_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[G]" x=0 y=0 z_index=0

define sketchpad stimH_1
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[H]" x=0 y=0 z_index=0

define sketchpad stimH_2
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[H]" x=0 y=0 z_index=0

define sketchpad stroopfix
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define keyboard_response stroopkey
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses "r;b;y;g"

define sequence stroopseq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stroopfix always
	run stroopword always
	run stroopkey always
	run Stroop_logger always

define sketchpad stroopword
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[colour]" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

define inline_javascript subject
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	if vars.subject_parity % 2 == 0:
	  vars.subject_group = 'A'
	elif vars.subject_nr % 2 == 1:
	  vars.subject_group = 'B'
	__end__

define form_text_input textinput
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "What was the letter sequnce just presented to you?"
	set form_question "Please hit return twice when you have put in your answer. "
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_1 always
	run stimA_1 always
	run ISI_1 always
	run stimB_1 always
	run ISI_1 always
	run stimC_1 always
	run ISI_1 always
	run stimD_1 "[D] != w"
	run ISI_1 always
	run stimE_1 "[E] != w"
	run ISI_1 always
	run stimF_1 "[F] != w"
	run ISI_1 always
	run stimG_1 "[G] != w"
	run ISI_1 always
	run stimH_1 "[H] != w"
	run dot_1 always
	run report_1 always

define sequence trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_2 always
	run stimA_2 always
	run ISI_1 always
	run stimB_2 always
	run ISI_1 always
	run stimC_2 always
	run ISI_1 always
	run stimD_2 "[D] != w"
	run ISI_1 always
	run stimE_2 "[E] != w"
	run ISI_1 always
	run stimF_2 "[F] != w"
	run ISI_1 always
	run stimG_2 "[G] != w"
	run ISI_1 always
	run stimH_2 "[H] != w"
	run equation_1 always
	run report_2 always
	run wmclog always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

define logger wmclog
	set description "Logs experimental data"
	set auto_log yes

define sketchpad word
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[colour]" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

