---
API: 2.1
OpenSesame: 3.3.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/mathildeeberholst/Downloads"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define keyboard_response Alder
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3;4;5;6;7;8;9"

define sketchpad Deltager_alder
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Hej og velkommen!<br /><br />Du skal deltage i et hukommelses-eksperiment<br /><br />Før vi går i gang vil vi gerne have lidt info om dig." x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Marker venligst, hvor gammel du er.<br /><br />18-20 år gammel tryk '1'<br /><br />21-25 år gammel tryk '2'<br /><br />26-30 år gammel tryk '3'<br /><br />31-35 år gammel tryk '4'<br /><br />36-40 år gammel tryk '5'<br /><br />41-45 år gammel tryk '6'<br /><br />46-50 år gammel tryk '7'<br /><br />51-55 år gammel tryk '8'<br /><br />56+   år gammel tryk '9'<br /><br /><br />Hvis du ikke ønsker at besvare spørgsmålet tryk '0'" x=0 y=96 z_index=0

define sketchpad Deltager_sex_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Tryk på '1' hvis du er mand<br /><br />Tryk på '2' hvis du er kvinde<br /><br />Tryk på '3' hvis ingen af de ovenstående beskriver dig<br /><br /><br />Tryk på '0' hvis du ikke ønsker at svare" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=always text="Oplys venligst dit køn<br />" x=0 y=-224 z_index=0

define sketchpad FB_fork
	set duration "[fb_tid]"
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Forkert!" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Gør dig klar til den næste runde" x=0 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Bedre held næste gang" x=0 y=64 z_index=0

define sketchpad FB_rigtig
	set duration "[fb_tid]"
	set description "Displays stimuli"
	draw textline center=1 color=green font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Rigtigt!<br />Godt gået!" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Gør dig klar til den næste runde" x=7 y=178 z_index=0

define sketchpad Instruktioner_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Hver runde af eksperimentet indeholder:<br />- En sekvens á 6 ord<br />- En pause af varierende længde<br />- En anden sekvens á 6 ord<br /><br /><br />Du skal huske om første sekvens af ord <br />er identisk med anden sekvens af ord<br />Den anden sekvens kan have to af ordene byttet rundt<br /> <br /><br />Hvis de to sekvenser er identiske, så tryk på ”højre-pilen”<br /> <br />Hvis de to sekvenser er forskellige, så tryk på ”venstre-pilen”<br /> <br />Du skal svare indenfor 5 sekunder<br /><br />Sid et sted, hvor du ikke bliver forstyrret" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=39 html=yes show_if=always text="Tak skal du have!" x=13 y=-316 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Tryk på en vilkårlig tast for at fortsætte" x=1 y=272 z_index=0

define inline_javascript Kode
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script bytter om på rækkefælgen af ordene tilfældigt med en vægtning så den vises uændret 33% af gangene.
	
	//Det ændrer også pausetiden tilfældigt med 50% sandsynlighed for en kort eller lang pause
	
	//Til sidst i scriptet bestemmes, hvad det korrekte svar er og hvad det forkerte er, så vi kan vide om vi skal vise "forkert"-teksten eller "for langsom"-teksten og finde ud af, hvad deltageren skal svare
	
	
	var sekv_chooser
	var sekv_ord = vars.Ord_1 + " , " + vars.Ord_2 + " , " + vars.Ord_3 + " , " + vars.Ord_4 + " , " + vars.Ord_5 + " , " + vars.Ord_6
	
	vars.sekv_chooser = Math.random()
	vars.pause_chooser = Math.random()
	
	//Varierer variablen pause_tid tilfældigt med en sandsynlighed på 50 %
	if(vars.pause_chooser < 0.5) {
	vars.pause_tid = 1000} else {
	vars.pause_tid = 5000
	};
	
	//tjekker om der bliver brugt korte eller lange ordene
	if(vars.sekvens == vars.sekvens.toUpperCase()) {
	vars.word_length = "lange ord"
	} else {
	vars.word_length = "korte ord"
	};
	
	//samme/uændret sekvens
	if(0.33 > vars.sekv_chooser && vars.sekv_chooser > 0) {
	vars.sekv_ord = vars.Ord_1 + " , " + vars.Ord_2 + " , " + vars.Ord_3 + " , " + vars.Ord_4 + " , " + vars.Ord_5 + " , " + vars.Ord_6;
	vars.correct_response = "right";
	vars.condition = "samme"
	};
	
	//bytter 1 og 3
	if(0.44 > vars.sekv_chooser && vars.sekv_chooser > 0.33) {
	vars.sekv_ord = vars.Ord_3 + " , " + vars.Ord_2 + " , " + vars.Ord_1 + " , " + vars.Ord_4 + " , " + vars.Ord_5 + " , " + vars.Ord_6;
	vars.correct_response = "left";
	vars.condition = "1 og 3 er byttet"
	};
	
	//bytter 1 og 5
	if(0.55 > vars.sekv_chooser && vars.sekv_chooser > 0.44) {
	vars.sekv_ord = vars.Ord_5 + " , " + vars.Ord_2 + " , " + vars.Ord_3 + " , " + vars.Ord_4 + " , " + vars.Ord_1 + " , " + vars.Ord_6;
	vars.correct_response = "left";
	vars.condition = "1 og 5 er byttet";
	};
	
	//bytter 3 og 5
	if(0.66 > vars.sekv_chooser && vars.sekv_chooser > 0.55) {
	vars.sekv_ord = vars.Ord_1 + " , " + vars.Ord_2 + " , " + vars.Ord_5 + " , " + vars.Ord_4 + " , " + vars.Ord_3 + " , " + vars.Ord_6;
	vars.correct_response = "left";
	vars.condition = "3 og 5 er byttet"
	};
	
	//bytter 2 og 4
	if(0.77 > vars.sekv_chooser && vars.sekv_chooser > 0.66) {
	vars.sekv_ord = vars.Ord_1 + " , " + vars.Ord_4 + " , " + vars.Ord_3 + " , " + vars.Ord_2 + " , " + vars.Ord_5 + " , " + vars.Ord_6;
	vars.correct_response = "left";
	vars.condition = "2 og 4 er byttet"
	};
	
	//bytter 2 og 6
	if(0.88 > vars.sekv_chooser && vars.sekv_chooser > 0.77) {
	vars.sekv_ord = vars.Ord_1 + " , " + vars.Ord_6 + " , " + vars.Ord_3 + " , " + vars.Ord_4 + " , " + vars.Ord_5 + " , " + vars.Ord_2;
	vars.correct_response = "left";
	vars.condition = "2 og 6 er byttet"
	};
	
	//bytter 4 og 6
	if(1 > vars.sekv_chooser && vars.sekv_chooser > 0.88) {
	vars.sekv_ord = vars.Ord_1 + " , " + vars.Ord_2 + " , " + vars.Ord_3 + " , " + vars.Ord_6 + " , " + vars.Ord_5 + " , " + vars.Ord_4;
	vars.correct_response = "left";
	vars.condition = "4 og 6 er byttet"
	};
	
	
	
	//bestemmer det korrekte svar og definere, det forkerte svar
	if(vars.correct_response == "left") {
	vars.fork = "right"
	}
	
	if(vars.correct_response == "right") {
	vars.fork = "left"
	}
	__end__

define sketchpad Langsom
	set duration "[fb_tid]"
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Du var for langsom!" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Prøv at være lidt hurtigere næste gang.<br /><br /><br /><br /><br />Gør dig klar til næste runde." x=0 y=160 z_index=0

define inline_javascript def_ord_1
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script laver en mellemregning mellem bogstaver og ord for variablen Ord_1
	
	vars.Ord_1r = vars.sekvens.toString().charAt(0)
	
	//Korte ord
	if(vars.Ord_1r == "a") {
	vars.Ord_1 = vars.a}
	
	if(vars.Ord_1r == "b") {
	vars.Ord_1 = vars.b}
	
	if(vars.Ord_1r == "c") {
	vars.Ord_1 = vars.c}
	
	if(vars.Ord_1r == "d") {
	vars.Ord_1 = vars.d}
	
	if(vars.Ord_1r == "e") {
	vars.Ord_1 = vars.e}
	
	if(vars.Ord_1r == "f") {
	vars.Ord_1 = vars.f}
	
	if(vars.Ord_1r == "g") {
	vars.Ord_1 = vars.g}
	
	if(vars.Ord_1r == "h") {
	vars.Ord_1 = vars.h}
	
	if(vars.Ord_1r == "i") {
	vars.Ord_1 = vars.i}
	
	if(vars.Ord_1r == "j") {
	vars.Ord_1 = vars.j}
	
	
	//lange ord
	if(vars.Ord_1r == "A") {
	vars.Ord_1 = vars.A}
	
	if(vars.Ord_1r == "B") {
	vars.Ord_1 = vars.B}
	
	if(vars.Ord_1r == "C") {
	vars.Ord_1 = vars.C}
	
	if(vars.Ord_1r == "D") {
	vars.Ord_1 = vars.D}
	
	if(vars.Ord_1r == "E") {
	vars.Ord_1 = vars.E}
	
	if(vars.Ord_1r == "F") {
	vars.Ord_1 = vars.F}
	
	if(vars.Ord_1r == "G") {
	vars.Ord_1 = vars.G}
	
	if(vars.Ord_1r == "H") {
	vars.Ord_1 = vars.H}
	
	if(vars.Ord_1r == "I") {
	vars.Ord_1 = vars.I}
	
	if(vars.Ord_1r == "J") {
	vars.Ord_1 = vars.J}
	__end__

define inline_javascript def_ord_2
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script laver en mellemregning mellem bogstaver og ord for variablen Ord_2
	
	vars.Ord_2r = vars.sekvens.toString().charAt(1)
	
	//Korte ord
	if(vars.Ord_2r == "a") {
	vars.Ord_2 = vars.a}
	
	if(vars.Ord_2r == "b") {
	vars.Ord_2 = vars.b}
	
	if(vars.Ord_2r == "c") {
	vars.Ord_2 = vars.c}
	
	if(vars.Ord_2r == "d") {
	vars.Ord_2 = vars.d}
	
	if(vars.Ord_2r == "e") {
	vars.Ord_2 = vars.e}
	
	if(vars.Ord_2r == "f") {
	vars.Ord_2 = vars.f}
	
	if(vars.Ord_2r == "g") {
	vars.Ord_2 = vars.g}
	
	if(vars.Ord_2r == "h") {
	vars.Ord_2 = vars.h}
	
	if(vars.Ord_2r == "i") {
	vars.Ord_2 = vars.i}
	
	if(vars.Ord_2r == "j") {
	vars.Ord_2 = vars.j}
	
	
	
	//Lange ord
	
	if(vars.Ord_2r == "A") {
	vars.Ord_2 = vars.A}
	
	if(vars.Ord_2r == "B") {
	vars.Ord_2 = vars.B}
	
	if(vars.Ord_2r == "C") {
	vars.Ord_2 = vars.C}
	
	if(vars.Ord_2r == "D") {
	vars.Ord_2 = vars.D}
	
	if(vars.Ord_2r == "E") {
	vars.Ord_2 = vars.E}
	
	if(vars.Ord_2r == "F") {
	vars.Ord_2 = vars.F}
	
	if(vars.Ord_2r == "G") {
	vars.Ord_2 = vars.G}
	
	if(vars.Ord_2r == "H") {
	vars.Ord_2 = vars.H}
	
	if(vars.Ord_2r == "I") {
	vars.Ord_2 = vars.I}
	
	if(vars.Ord_2r == "J") {
	vars.Ord_2 = vars.J}
	__end__

define inline_javascript def_ord_3
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script laver en mellemregning mellem bogstaver og ord for variablen Ord_3
	
	vars.Ord_3r = vars.sekvens.toString().charAt(2)
	
	//Korte ord
	if(vars.Ord_3r == "a") {
	vars.Ord_3 = vars.a}
	
	if(vars.Ord_3r == "b") {
	vars.Ord_3 = vars.b}
	
	if(vars.Ord_3r == "c") {
	vars.Ord_3 = vars.c}
	
	if(vars.Ord_3r == "d") {
	vars.Ord_3 = vars.d}
	
	if(vars.Ord_3r == "e") {
	vars.Ord_3 = vars.e}
	
	if(vars.Ord_3r == "f") {
	vars.Ord_3 = vars.f}
	
	if(vars.Ord_3r == "g") {
	vars.Ord_3 = vars.g}
	
	if(vars.Ord_3r == "h") {
	vars.Ord_3 = vars.h}
	
	if(vars.Ord_3r == "i") {
	vars.Ord_3 = vars.i}
	
	if(vars.Ord_3r == "j") {
	vars.Ord_3 = vars.j}
	
	
	
	//Lange ord
	if(vars.Ord_3r == "A") {
	vars.Ord_3 = vars.A}
	
	if(vars.Ord_3r == "B") {
	vars.Ord_3 = vars.B}
	
	if(vars.Ord_3r == "C") {
	vars.Ord_3 = vars.C}
	
	if(vars.Ord_3r == "D") {
	vars.Ord_3 = vars.D}
	
	if(vars.Ord_3r == "E") {
	vars.Ord_3 = vars.E}
	
	if(vars.Ord_3r == "F") {
	vars.Ord_3 = vars.F}
	
	if(vars.Ord_3r == "G") {
	vars.Ord_3 = vars.G}
	
	if(vars.Ord_3r == "H") {
	vars.Ord_3 = vars.H}
	
	if(vars.Ord_3r == "I") {
	vars.Ord_3 = vars.I}
	
	if(vars.Ord_3r == "J") {
	vars.Ord_3 = vars.J}
	__end__

define inline_javascript def_ord_4
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script laver en mellemregning mellem bogstaver og ord for variablen Ord_4
	
	vars.Ord_4r = vars.sekvens.toString().charAt(3)
	
	//Korte ord
	if(vars.Ord_4r == "a") {
	vars.Ord_4 = vars.a}
	
	if(vars.Ord_4r == "b") {
	vars.Ord_4 = vars.b}
	
	if(vars.Ord_4r == "c") {
	vars.Ord_4 = vars.c}
	
	if(vars.Ord_4r == "d") {
	vars.Ord_4 = vars.d}
	
	if(vars.Ord_4r == "e") {
	vars.Ord_4 = vars.e}
	
	if(vars.Ord_4r == "f") {
	vars.Ord_4 = vars.f}
	
	if(vars.Ord_4r == "g") {
	vars.Ord_4 = vars.g}
	
	if(vars.Ord_4r == "h") {
	vars.Ord_4 = vars.h}
	
	if(vars.Ord_4r == "i") {
	vars.Ord_4 = vars.i}
	
	if(vars.Ord_4r == "j") {
	vars.Ord_4 = vars.j}
	
	
	
	//Lange ord
	if(vars.Ord_4r == "A") {
	vars.Ord_4 = vars.A}
	
	if(vars.Ord_4r == "B") {
	vars.Ord_4 = vars.B}
	
	if(vars.Ord_4r == "C") {
	vars.Ord_4 = vars.C}
	
	if(vars.Ord_4r == "D") {
	vars.Ord_4 = vars.D}
	
	if(vars.Ord_4r == "E") {
	vars.Ord_4 = vars.E}
	
	if(vars.Ord_4r == "F") {
	vars.Ord_4 = vars.F}
	
	if(vars.Ord_4r == "G") {
	vars.Ord_4 = vars.G}
	
	if(vars.Ord_4r == "H") {
	vars.Ord_4 = vars.H}
	
	if(vars.Ord_4r == "I") {
	vars.Ord_4 = vars.I}
	
	if(vars.Ord_4r == "J") {
	vars.Ord_4 = vars.J}
	__end__

define inline_javascript def_ord_5
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script laver en mellemregning mellem bogstaver og ord for variablen Ord_5
	
	vars.Ord_5r = vars.sekvens.toString().charAt(4)
	
	//Korte ord
	if(vars.Ord_5r == "a") {
	vars.Ord_5 = vars.a}
	
	if(vars.Ord_5r == "b") {
	vars.Ord_5 = vars.b}
	
	if(vars.Ord_5r == "c") {
	vars.Ord_5 = vars.c}
	
	if(vars.Ord_5r == "d") {
	vars.Ord_5 = vars.d}
	
	if(vars.Ord_5r == "e") {
	vars.Ord_5 = vars.e}
	
	if(vars.Ord_5r == "f") {
	vars.Ord_5 = vars.f}
	
	if(vars.Ord_5r == "g") {
	vars.Ord_5 = vars.g}
	
	if(vars.Ord_5r == "h") {
	vars.Ord_5 = vars.h}
	
	if(vars.Ord_5r == "i") {
	vars.Ord_5 = vars.i}
	
	if(vars.Ord_5r == "j") {
	vars.Ord_5 = vars.j}
	
	
	
	//Lange ord
	if(vars.Ord_5r == "A") {
	vars.Ord_5 = vars.A}
	
	if(vars.Ord_5r == "B") {
	vars.Ord_5 = vars.B}
	
	if(vars.Ord_5r == "C") {
	vars.Ord_5 = vars.C}
	
	if(vars.Ord_5r == "D") {
	vars.Ord_5 = vars.D}
	
	if(vars.Ord_5r == "E") {
	vars.Ord_5 = vars.E}
	
	if(vars.Ord_5r == "F") {
	vars.Ord_5 = vars.F}
	
	if(vars.Ord_5r == "G") {
	vars.Ord_5 = vars.G}
	
	if(vars.Ord_5r == "H") {
	vars.Ord_5 = vars.H}
	
	if(vars.Ord_5r == "I") {
	vars.Ord_5 = vars.I}
	
	if(vars.Ord_5r == "J") {
	vars.Ord_5 = vars.J}
	__end__

define inline_javascript def_ord_6
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//Dette script laver en mellemregning mellem bogstaver og ord for variablen Ord_6
	
	vars.Ord_6r = vars.sekvens.toString().charAt(5)
	
	//Korte ord
	if(vars.Ord_6r == "a") {
	vars.Ord_6 = vars.a}
	
	if(vars.Ord_6r == "b") {
	vars.Ord_6 = vars.b}
	
	if(vars.Ord_6r == "c") {
	vars.Ord_6 = vars.c}
	
	if(vars.Ord_6r == "d") {
	vars.Ord_6 = vars.d}
	
	if(vars.Ord_6r == "e") {
	vars.Ord_6 = vars.e}
	
	if(vars.Ord_6r == "f") {
	vars.Ord_6 = vars.f}
	
	if(vars.Ord_6r == "g") {
	vars.Ord_6 = vars.g}
	
	if(vars.Ord_6r == "h") {
	vars.Ord_6 = vars.h}
	
	if(vars.Ord_6r == "i") {
	vars.Ord_6 = vars.i}
	
	if(vars.Ord_6r == "j") {
	vars.Ord_6 = vars.j}
	
	
	
	//Lange ord
	if(vars.Ord_6r == "A") {
	vars.Ord_6 = vars.A}
	
	if(vars.Ord_6r == "B") {
	vars.Ord_6 = vars.B}
	
	if(vars.Ord_6r == "C") {
	vars.Ord_6 = vars.C}
	
	if(vars.Ord_6r == "D") {
	vars.Ord_6 = vars.D}
	
	if(vars.Ord_6r == "E") {
	vars.Ord_6 = vars.E}
	
	if(vars.Ord_6r == "F") {
	vars.Ord_6 = vars.F}
	
	if(vars.Ord_6r == "G") {
	vars.Ord_6 = vars.G}
	
	if(vars.Ord_6r == "H") {
	vars.Ord_6 = vars.H}
	
	if(vars.Ord_6r == "I") {
	vars.Ord_6 = vars.I}
	
	if(vars.Ord_6r == "J") {
	vars.Ord_6 = vars.J}
	__end__

define inline_javascript def_ord_og_tid
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//tider
	vars.ord_tid = 5000
	vars.dot_tid = 1000
	//bestemmer tiden på refresh pausen (rf_pause), der giver brugeren lidt mere tid til at nulstille efter hvert forsøg og på, hvor lang tid feedbacken skal vises
	vars.rf_tid = 1000
	vars.fb_tid = 3000
	
	//pause_tid ekstra variabel
	vars.pause_ting = 0
	
	//___________________________________________________________________________________________________
	//Herunder defineres sættet af ord, som anvendes til eksperimentet
	
	//korte ord
	vars.a = "stok"
	vars.b = "rust"
	vars.c = "frø"
	vars.d = "brus"
	vars.e = "søm"
	vars.f = "telt"
	vars.g = "ur"
	vars.h = "ged"
	vars.i = "sut"
	vars.j = "mos"
	
	//lange ord
	vars.A = "gennemgang"
	vars.B = "kongehus"
	vars.C = "sønderjysk"
	vars.D = "toilet"
	vars.E = "diamant"
	vars.F = "terasse"
	vars.G = "pianist"
	vars.H = "juletræ"
	vars.I = "eksistens"
	vars.J = "appelsin"
	
	
	//test korte ord
	//vars.a = "1"
	//vars.b = "2"
	//vars.c = "3"
	//vars.d = "4"
	//vars.e = "5"
	//vars.f = "6"
	//vars.g = "7"
	//vars.h = "8"
	//vars.i = "9"
	//vars.j = "T"
	__end__

define sketchpad dot
	set duration "[dot_tid]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define feedback exp_fb_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Din gennemsnitlige tid for at huske <br />rækkefølgen af ord er: [avg_rt]ms<br /><br />Du huskede [acc]% af de rigtige rækkefølger af ord!<br /><br />Da vores opgave ikke er skrevet endnu, kan vi desværre <br />ikke fortælle dig, om du husker godt eller dårligt! <br /><br />Til gengæld ved du nu hvor længe, det tager dig <br />at reagere på din hukommelse, og hvor meget du kan huske i træk" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Tryk på en vilkårlig tast for at afslutte" x=-9 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=always text="Mange tak for din deltagelse!" x=0 y=-288 z_index=0

define sketchpad exp_intro_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Nu starter eksperimentet<br /> <br /><br />Der er 40 runder og det tager ca. 10 minutter" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Tryk på en vilkårlig tast for at starte" x=0.0 y=90.0 z_index=0

define loop exp_loop
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 40
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sekvens hcbdef
	setcycle 0 condition 0
	setcycle 0 tilstand experiment
	setcycle 0 word_length kort
	setcycle 1 sekvens cbageh
	setcycle 1 condition 2
	setcycle 1 tilstand experiment
	setcycle 1 word_length kort
	setcycle 2 sekvens abcdfi
	setcycle 2 condition 0
	setcycle 2 tilstand experiment
	setcycle 2 word_length kort
	setcycle 3 sekvens icjegf
	setcycle 3 condition 0
	setcycle 3 tilstand experiment
	setcycle 3 word_length kort
	setcycle 4 sekvens dahfeg
	setcycle 4 condition 5
	setcycle 4 tilstand experiment
	setcycle 4 word_length kort
	setcycle 5 sekvens abcdef
	setcycle 5 condition 1
	setcycle 5 tilstand experiment
	setcycle 5 word_length kort
	setcycle 6 sekvens jfghab
	setcycle 6 condition 0
	setcycle 6 tilstand experiment
	setcycle 6 word_length kort
	setcycle 7 sekvens cdabfe
	setcycle 7 condition 2
	setcycle 7 tilstand experiment
	setcycle 7 word_length kort
	setcycle 8 sekvens hcbdef
	setcycle 8 condition 3
	setcycle 8 tilstand experiment
	setcycle 8 word_length kort
	setcycle 9 sekvens cbaghe
	setcycle 9 condition 6
	setcycle 9 tilstand experiment
	setcycle 9 word_length kort
	setcycle 10 sekvens ABCDEFI
	setcycle 10 condition 0
	setcycle 10 tilstand experiment
	setcycle 10 word_length lang
	setcycle 11 sekvens ICJEGF
	setcycle 11 condition 4
	setcycle 11 tilstand experiment
	setcycle 11 word_length lang
	setcycle 12 sekvens DAHFEG
	setcycle 12 condition 1
	setcycle 12 tilstand experiment
	setcycle 12 word_length lang
	setcycle 13 sekvens CABDEF
	setcycle 13 condition 5
	setcycle 13 tilstand experiment
	setcycle 13 word_length lang
	setcycle 14 sekvens JFGHAB
	setcycle 14 condition 3
	setcycle 14 tilstand experiment
	setcycle 14 word_length lang
	setcycle 15 sekvens CDABFE
	setcycle 15 condition 0
	setcycle 15 tilstand experiment
	setcycle 15 word_length lang
	setcycle 16 sekvens IHACDE
	setcycle 16 condition 4
	setcycle 16 tilstand experiment
	setcycle 16 word_length lang
	setcycle 17 sekvens ECBFAD
	setcycle 17 condition 3
	setcycle 17 tilstand experiment
	setcycle 17 word_length lang
	setcycle 18 sekvens IHAEDC
	setcycle 18 condition 6
	setcycle 18 tilstand experiment
	setcycle 18 word_length lang
	setcycle 19 sekvens CEFIJH
	setcycle 19 condition 0
	setcycle 19 tilstand experiment
	setcycle 19 word_length lang
	setcycle 20 sekvens acefih
	setcycle 20 condition 0
	setcycle 20 tilstand experiment
	setcycle 20 word_length kort
	setcycle 21 sekvens ihcabd
	setcycle 21 condition 1
	setcycle 21 tilstand experiment
	setcycle 21 word_length kort
	setcycle 22 sekvens ecfabi
	setcycle 22 condition 5
	setcycle 22 tilstand experiment
	setcycle 22 word_length kort
	setcycle 23 sekvens jaedcb
	setcycle 23 condition 0
	setcycle 23 tilstand experiment
	setcycle 23 word_length kort
	setcycle 24 sekvens bacihj
	setcycle 24 condition 4
	setcycle 24 tilstand experiment
	setcycle 24 word_length kort
	setcycle 25 sekvens hajibc
	setcycle 25 condition 6
	setcycle 25 tilstand experiment
	setcycle 25 word_length kort
	setcycle 26 sekvens hijabd
	setcycle 26 condition 1
	setcycle 26 tilstand experiment
	setcycle 26 word_length kort
	setcycle 27 sekvens acdjih
	setcycle 27 condition 0
	setcycle 27 tilstand experiment
	setcycle 27 word_length kort
	setcycle 28 sekvens cijbad
	setcycle 28 condition 3
	setcycle 28 tilstand experiment
	setcycle 28 word_length kort
	setcycle 29 sekvens habidj
	setcycle 29 condition 0
	setcycle 29 tilstand experiment
	setcycle 29 word_length kort
	setcycle 30 sekvens ACEFIH
	setcycle 30 condition 2
	setcycle 30 tilstand experiment
	setcycle 30 word_length lang
	setcycle 31 sekvens IHCABD
	setcycle 31 condition 0
	setcycle 31 tilstand experiment
	setcycle 31 word_length lang
	setcycle 32 sekvens JEDFCB
	setcycle 32 condition 5
	setcycle 32 tilstand experiment
	setcycle 32 word_length lang
	setcycle 33 sekvens JAEDCB
	setcycle 33 condition 1
	setcycle 33 tilstand experiment
	setcycle 33 word_length lang
	setcycle 34 sekvens BACIHJ
	setcycle 34 condition 0
	setcycle 34 tilstand experiment
	setcycle 34 word_length lang
	setcycle 35 sekvens HIJABD
	setcycle 35 condition 0
	setcycle 35 tilstand experiment
	setcycle 35 word_length lang
	setcycle 36 sekvens ACDJIH
	setcycle 36 condition 4
	setcycle 36 tilstand experiment
	setcycle 36 word_length lang
	setcycle 37 sekvens CIJBAD
	setcycle 37 condition 6
	setcycle 37 tilstand experiment
	setcycle 37 word_length lang
	setcycle 38 sekvens HABIDJ
	setcycle 38 condition 5
	setcycle 38 tilstand experiment
	setcycle 38 word_length lang
	setcycle 39 sekvens ADEBCI
	setcycle 39 condition 0
	setcycle 39 tilstand experiment
	setcycle 39 word_length lang
	run training_seq

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run def_ord_og_tid always
	run Deltager_alder always
	run Alder always
	run Deltager_sex_1 always
	run sex always
	run Instruktioner_1 always
	run train_intro_1 always
	run training_loop always
	run train_fb_1 always
	run exp_intro_1 always
	run exp_loop always
	run exp_fb_1 always

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad ord
	set duration "[ord_tid]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Ord_1], [Ord_2], [Ord_3], [Ord_4], [Ord_5], [Ord_6]" x=0 y=0 z_index=0

define sketchpad ord2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[sekv_ord]" x=0 y=0 z_index=0

define sketchpad pause
	set duration "[pause_tid]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw circle color="#000000" fill=1 penwidth=1 r=160 show_if=always x=0 y=0 z_index=0

define sketchpad rf_pause
	set duration "[rf_tid]"
	set description "Displays stimuli"

define keyboard_response sex
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3"

define keyboard_response svar_input
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define feedback train_fb_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Din gennemsnitlige reaktionstid var [avg_rt]ms<br /><br />Du havde [acc]% rigtige" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Tryk på en vilkårlig tast for at fortsætte" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=always text="Godt gået! Du har nu gennemført træningen" x=0 y=-192 z_index=0

define sketchpad train_intro_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Inden det rigtige eksperiment starter, <br />får du noget trænning!<br /> <br />Træningen består af 6 runder<br /><br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Tryk på en vilkårlig tast for at starte trænningen" x=-11 y=158 z_index=0

define loop training_loop
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sekvens dfbhei
	setcycle 0 tilstand training
	setcycle 1 sekvens ghaceb
	setcycle 1 tilstand training
	setcycle 2 sekvens dicafb
	setcycle 2 tilstand training
	setcycle 3 sekvens EFJIGC
	setcycle 3 tilstand training
	setcycle 4 sekvens FGHDEA
	setcycle 4 tilstand training
	setcycle 5 sekvens DFCAEB
	setcycle 5 tilstand training
	run training_seq

define sequence training_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run def_ord_1 always
	run def_ord_2 always
	run def_ord_3 always
	run def_ord_4 always
	run def_ord_5 always
	run def_ord_6 always
	run Kode always
	run dot always
	run ord always
	run pause always
	run ord2 always
	run svar_input always
	run new_logger always
	run Langsom "[response_svar_input]=None"
	run FB_rigtig "[correct]=1"
	run FB_fork "[response_svar_input]=[fork]"
	run rf_pause always

